%C80
"#############################################################################"
"                                                                             "
"  EGSnrc BEAMnrc component module: synchronized dynamic Varian MLC           "
"  Copyright (C) 2015 National Research Council Canada                        "
"                                                                             "
"  This file is part of EGSnrc.                                               "
"                                                                             "
"  EGSnrc is free software: you can redistribute it and/or modify it under    "
"  the terms of the GNU Affero General Public License as published by the     "
"  Free Software Foundation, either version 3 of the License, or (at your     "
"  option) any later version.                                                 "
"                                                                             "
"  EGSnrc is distributed in the hope that it will be useful, but WITHOUT ANY  "
"  WARRANTY; without even the implied warranty of MERCHANTABILITY or FITNESS  "
"  FOR A PARTICULAR PURPOSE.  See the GNU Affero General Public License for   "
"  more details.                                                              "
"                                                                             "
"  You should have received a copy of the GNU Affero General Public License   "
"  along with EGSnrc. If not, see <http://www.gnu.org/licenses/>.             "
"                                                                             "
"#############################################################################"
"                                                                             "
"  Authors:         Tony Popescu, 2010                                        "
"                   Julio Lobo, 2010                                          "
"                                                                             "
"  Contributors:    Frederic Tessier                                          "
"                   Blake Walters                                             "
"                                                                             "
"#############################################################################"
"                                                                             "
"  This code was originally derived from the existing BEAMnrc DYNVMLC         "
"  component module and contributed back to NRC by the authors in 2010.       "
"                                                                             "
"  The contributors named above are only those who could be identified from   "
"  this file's revision history.                                              "
"                                                                             "
"  This code is part of the BEAMnrc code system for Monte Carlo simulation of "
"  radiotherapy treatments units. BEAM was originally developed at the        "
"  National Research Council of Canada as part of the OMEGA collaborative     "
"  research project with the University of Wisconsin, and was originally      "
"  described in:                                                              "
"                                                                             "
"  BEAM: A Monte Carlo code to simulate radiotherapy treatment units,         "
"  DWO Rogers, BA Faddegon, GX Ding, C-M Ma, J Wei and TR Mackie,             "
"  Medical Physics 22, 503-524 (1995).                                        "
"                                                                             "
"  BEAM User Manual                                                           "
"  DWO Rogers, C-M Ma, B Walters, GX Ding, D Sheikh-Bagheri and G Zhang,      "
"  NRC Report PIRS-509A (rev D)                                               "
"                                                                             "
"  As well as the authors of this paper and report, Joanne Treurniet of NRC   "
"  made significant contributions to the code system, in particular the GUIs  "
"  and EGS_Windows. Mark Holmes, Brian Geiser and Paul Reckwerdt of Wisconsin "
"  played important roles in the overall OMEGA project within which the BEAM  "
"  code system was developed.                                                 "
"                                                                             "
"  There have been major upgrades in the BEAM code starting in 2000 which     "
"  have been heavily supported by Iwan Kawrakow, most notably: the port to    "
"  EGSnrc, the inclusion of history-by-history statistics and the development "
"  of the directional bremsstrahlung splitting variance reduction technique.  "
"                                                                             "
"#############################################################################"


"***********************************************************************
"
"                             *****************               ""toc:
"                             *               *               ""toc:
"                             *   SYNCVMLC     *               ""toc:
"                             *               *               ""toc:
"                             *****************               ""toc:
"
"
"************************************************************************
"************************************************************************
"
"
"                          GENERAL DESCRIPTION
"                          *******************
"
"   This set of routines is used in conjunction with BEAM.MORTRAN to
"   simulate one component module of a clinical linear accelerator:
"
"   This component module can be added to the simulation by including these
"   routines in the MORTRAN file BEAM_CM.MORTRAN and including the MORTRAN
"   replacement macros associated with this component module in the file
"   BEAM_COMMON.MORTRAN.  The order of the component modules in either of
"   these files is unimportant.  To explicitly include this component module
"   the simulation it must be included in the $CM_LIST replacement statement.
"   The component modules in this list are stacked sequentially for the
"   simulation, one on top of the other, and must not overlap.
"
"   1>. This module can be used as single or double focus multileaf
"       collimators.
"   2>. Used as x or y direction parallel to the leaf.
"   3>. it can have max 100 leaf which are equal width, symmetrical
"       arranged with y axis or x axis.
"   4>. Each leaf has two separate parts which can be moved in the leaf
"       direction independently.
"   5>. Rules to obey:
"           i.  Input the top z coordinates  as ZMIN_$SYNCVMLC
"              and thickness respectively.
"           ii. Input the num of leaf and the total width of the leaf, each
"               leaf will have equal width.
"           iii. All leaf have the same material structures.
"           iv. The outside of the leaf will be the same material as leaf
"           v.  Input the focus points for both directions(x and y). each
"               leaf will be single or double focused according to the user.
"
"
"
;
"I>
"I> Geometry of SYNCVMLC:
"I> **********************
"I>                                 top view
"I>
"I>            ------------------------------------------------
"I>                                |
"I>            ------------------------------------------------
"I>                           |           |
"I>           -----------------           ---------------------
"I>                      |        opening     |
"I>           ---------------     (IR=1)      -----------------
"I>                         |                 |
"I>           ------leaves--------      -----------------------
"I>                 (IR=2)      |     |
"I>           --------------------------------------------------
"I>                                  |
"I>           --------------------------------------------------
"I>
;
"I>       cross-section through leaves taken perpendicular to leaves
"I>
"I>                               * ZFOCUS(1)
"I>                           .   .   .
"I>                       .    . .|. .    .
"I> - - - - - - -     .     .   . | .   .     .
"I> airgap(IR=3)  .      .     .  |  .     .      .
"I>     -------- ------ ------ ---|--- ------ ------ ---------
"I>   leaf     / leaf / leaf /leaf|leaf\ leaf  \ leaf \  leaf
"I>   1    /    2  /     3  /  4  | 5   \  6     \  7    \  8
"I>    /        /          /      |      \          \        \
"I>    -------- ---------- -------|------- ---------- --------- -
"I>                            Z-axis
;
"I>            cross-section through leaf taken || to leaf
"I>             I)  FOR FOCUSED DIVERGENT LEAF ENDS :
"I>
"I>                               * ZFOCUS(2)
"I>  - - - - - - - - - - - -    . | .
"I>  airgap(IR=4)              .  |  .
"I>     ----------------------    |    ------------------------
"I>                          /    |    \
"I>        Leaf B  (-ve)    /     |     \    Leaf A (+ve)
"I>                        /      |      \
"I>    -------------------        |        ----------------------
"I>                            Z-axis

"I>              II)  FOR ROUNDED LEAF ENDS :
"I>
"I>                               *
"I>  - - - - - - - - - - - -      |
"I>  airgap(IR=4)                 |
"I>     -------------             |              --------------
"I>      --------\     \          |            /
"I>    hole IR=3 | A   |          |           |<------Leafradius
"I>     ---------/     /          |            \    B
"I>     -------------             |              --------------
"I>                            Z-axis
;
"I>   IR is the region number within the CM.  There are three local regions
"I>   shown above.
"I>
"I>
"I>            ------------------------------------------------------
"I>            |             Region            | Description         |
"I>            |-------------------------------|---------------------|
"I>            |  absolute       | local       |                     |
"I>            |-----------------|-------------|                     |
"I>            |                 |             |                     |
"I>            |IRSTART_MLC      | IR_MLC      |  as shown in above  |
"I>            |  +IR_MLC-1      |             |    (1 to 4)         |
"I>            |                 |             |                     |
"I>            |                 |             |                     |
"I>            -------------------------------------------------------
"I>
;

" Subroutines:
" ************
"                      INPUT_$SYNCVMLC
"                      ISUMRY_$SYNCVMLC
"                      HOWFAR_$SYNCVMLC
"                      WHERE_AM_I_$SYNCVMLC
"
"       Called from BEAM's subroutines:
"                      INPUT
"                      ISUMRY
"                      HOWFAR
"
"       Subroutines called:
"                      WHERE_AM_I (a BEAM subroutine)
"
"************************************************************************
"
"                             RESTRICTIONS ON USE/KNOWN BUGS
"                             *******************
"
"************************************************************************
;
"
"                               INPUT FROM UNIT 5
"                               *****************
"
"I>
"I>  CARDS CM_$SYNCVMLC
"I>  ********************
"I>  -1  Dummy line to indicate start of CM
"I>
"I>   0  RMAX_CM(ICM_$SYNCVMLC) (F10.5):  Half-width of CM boundary (cm).
"I>
"I>   1  TITLE_$SYNCVMLC (60A1):  Title of CM.
"I>
"I>   2  ORIENT_$SYNCVMLC, NGROUP_$SYNCVMLC, MODE_$SYNCVMLC (3I5)
"I>
"I>            ORIENT_$SYNCVMLC = 0 for leaves parallel to Y direction
"I>                            = 1 for leaves parallel to X direction
"I>            NGROUP_$SYNCVMLC = number of groups of adjacent leaves where
"I>                              all leaves in a group are:
"I>                              1. FULL leaves
"I>                              2. TARGET/ISOCENTER pairs with TARGET leaf
"I>                                 on the -X (ORIENT=0) or -Y (ORIENT=1) side
"I>                              NGROUP_$SYNCVMLC defaults to 3 if set <=0
"I>            MODE_$SYNCVMLC = 0 for single setting of leaf openings (static
"I>                            field)
"I>                          = 1 for dynamic mlc delivery--simulated leaf
"I>                            movement while beam is on
"I>                          = 2 for step-and-shoot delivery--beam off while
"I>                            leaf positions change
"I>
"I>   3  ZMIN_$SYNCVMLC (F15.0): Z of top of MLC (excluding airgap)
"I>
"I>   4  ZTHICK_$SYNCVMLC (F15.0): Thickness of the leaves ( z-axis (cm))
"I>
"I>   5  LEAFWIDTH_$SYNCVMLC(1), WTONGUE_$SYNCVMLC(1), WGROOVE_$SYNCVMLC(1),
"I>      WTIP_$SYNCVMLC(1), WRAILTOP_$SYNCVMLC(1), WRAILBOT_$SYNCVMLC(1),
"I>      ZTIP_$SYNCVMLC(1), ZLEAF_$SYNCVMLC(1), ZTONGUE_$SYNCVMLC(1),
"I>      ZGROOVE_$SYNCVMLC(1), ZHOLETOP_$SYNCVMLC(1), ZHOLEBOT_$SYNCVMLC(1),
"I>      HOLEPOS_FULL_$SYNCVMLC, ZRAILTOP_$SYNCVMLC(1), ZRAILBOT_$SYNCVMLC(1)
"I>         (15F15.0)
"I>
"I>        For a FULL type leaf (all dimensions in cm--all widths are
"I>                              projected back to ZMIN_$SYNCVMLC):
"I>
"I>           LEAFWIDTH_$SYNCVMLC(1): Width of leaf (not including tongue)
"I>             WTONGUE_$SYNCVMLC(1): Width of tongue
"I>             WGROOVE_$SYNCVMLC(1): Width of groove
"I>                WTIP_$SYNCVMLC(1): Width of tip at top of leaf
"I>            WRAILTOP_$SYNCVMLC(1): Width of top of support rail
"I>            WRAILBOT_$SYNCVMLC(1): Width of bottom of support rail
"I>                ZTIP_$SYNCVMLC(1): Z at which tip at top of leaf begins
"I>               ZLEAF_$SYNCVMLC(1): Z of top of leaf
"I>             ZTONGUE_$SYNCVMLC(1): Z of bottom of tongue
"I>             ZGROOVE_$SYNCVMLC(1): Z of bottom of groove
"I>            ZHOLETOP_$SYNCVMLC(1): Z of top of driving screw hole
"I>            ZHOLEBOT_$SYNCVMLC(1): Z of bottom of driving screw hole
"I>           HOLEPOS_FULL_$SYNCVMLC: Distance of hole from leaf tip
"I>            ZRAILTOP_$SYNCVMLC(1): Z of top of support rail
"I>            ZRAILBOT_$SYNCVMLC(1): Z of bottom of support rail
"I>
"I>       Note: Z positions are input in order of increasing Z.  Thus
"I>             ZLEAF_$SYNCVMLC(1)>=ZTIP_$SYNCVMLC(1), etc.  See the BEAM
"I>             manual or GUI help for restrictions on widths.
"I>
"I>
"I>   6  LEAFWIDTH_$SYNCVMLC(2), WTONGUE_$SYNCVMLC(2), WGROOVE_$SYNCVMLC(2),
"I>      WTIP_$SYNCVMLC(2), WRAILTOP_$SYNCVMLC(2), WRAILBOT_$SYNCVMLC(2),
"I>      ZRAILTOP_$SYNCVMLC(2), ZRAILBOT_$SYNCVMLC(2), ZHOLETOP_$SYNCVMLC(2),
"I>      ZHOLEBOT_$SYNCVMLC(2), HOLEPOS_TAR_$SYNCVMLC, ZTONGUE_$SYNCVMLC(2),
"I>      ZGROOVE_$SYNCVMLC(2), ZLEAF_$SYNCVMLC(2), ZTIP_$SYNCVMLC(2) (15F15.0)
"I>
"I>        For a TARGET type leaf (all dimensions in cm--all widths are
"I>                              projected back to ZMIN_$SYNCVMLC):
"I>
"I>           LEAFWIDTH_$SYNCVMLC(2): Width of leaf (not including tongue)
"I>             WTONGUE_$SYNCVMLC(2): Width of tongue
"I>             WGROOVE_$SYNCVMLC(2): Width of groove
"I>                WTIP_$SYNCVMLC(2): Width of tip at bottom of leaf
"I>            WRAILTOP_$SYNCVMLC(2): Width of top of support rail
"I>            WRAILBOT_$SYNCVMLC(2): Width of bottom of support rail
"I>            ZRAILTOP_$SYNCVMLC(2): Z of top of support rail
"I>            ZRAILBOT_$SYNCVMLC(2): Z of bottom of support rail
"I>            ZHOLETOP_$SYNCVMLC(2): Z of top of driving screw hole
"I>            ZHOLEBOT_$SYNCVMLC(2): Z of bottom of driving screw hole
"I>            HOLEPOS_TAR_$SYNCVMLC: Distance of hole from leaf tip
"I>             ZTONGUE_$SYNCVMLC(2): Z of bottom of tongue
"I>             ZGROOVE_$SYNCVMLC(2): Z of top of groove
"I>               ZLEAF_$SYNCVMLC(2): Z of bottom of leaf
"I>                ZTIP_$SYNCVMLC(2): Z of bottom of tip at bottom of leaf
"I>
"I>       Note: Z positions are input in order of increasing Z.  Thus
"I>             ZLEAF_$SYNCVMLC(1)>=ZTIP_$SYNCVMLC(1), etc.  See the BEAM
"I>             manual or GUI help for restrictions on widths.
"I>
"I>
"I>   7  LEAFWIDTH_$SYNCVMLC(3), WTONGUE_$SYNCVMLC(3), WGROOVE_$SYNCVMLC(3),
"I>      WTIP_$SYNCVMLC(3), WRAILTOP_$SYNCVMLC(3), WRAILBOT_$SYNCVMLC(3),
"I>      ZTIP_$SYNCVMLC(3), ZLEAF_$SYNCVMLC(3), ZTONGUE_$SYNCVMLC(3),
"I>      ZGROOVE_$SYNCVMLC(3), ZHOLETOP_$SYNCVMLC(3), ZHOLEBOT_$SYNCVMLC(3),
"I>      HOLEPOS_ISO_$SYNCVMLC, ZRAILTOP_$SYNCVMLC(3), ZRAILBOT_$SYNCVMLC(3)
"I>                  (15F15.0)
"I>
"I>        For a ISOCENTER type leaf (all dimensions in cm--all widths are
"I>                              projected back to ZMIN_$SYNCVMLC):
"I>
"I>           LEAFWIDTH_$SYNCVMLC(3): Width of leaf (not including tongue)
"I>             WTONGUE_$SYNCVMLC(3): Width of tongue
"I>             WGROOVE_$SYNCVMLC(3): Width of groove
"I>                WTIP_$SYNCVMLC(3): Width of tip at top of leaf
"I>            WRAILTOP_$SYNCVMLC(3): Width of top of support rail
"I>            WRAILBOT_$SYNCVMLC(3): Width of bottom of support rail
"I>                ZTIP_$SYNCVMLC(3): Z at which tip at top of leaf begins
"I>               ZLEAF_$SYNCVMLC(3): Z of top of leaf
"I>             ZTONGUE_$SYNCVMLC(3): Z of top of tongue
"I>             ZGROOVE_$SYNCVMLC(3): Z of bottom of groove
"I>            ZHOLETOP_$SYNCVMLC(3): Z of top of driving screw hole
"I>            ZHOLEBOT_$SYNCVMLC(3): Z of bottom of driving screw hole
"I>            HOLEPOS_ISO_$SYNCVMLC: Distance of hole from leaf tip
"I>            ZRAILTOP_$SYNCVMLC(3): Z of top of support rail
"I>            ZRAILBOT_$SYNCVMLC(3): Z of bottom of support rail
"I>
"I>       Note: Z positions are input in order of increasing Z.  Thus
"I>             ZLEAF_$SYNCVMLC(1)>=ZTIP_$SYNCVMLC(1), etc.  See the BEAM
"I>             manual or GUI help for restrictions on widths.
"I>
"I>        Note: 1. For TARGET and ISOCENTER leaves to fit together,
"I>                 ZTONGUE_$SYNCVMLC(3)>=ZGROOVE_$SYNCVMLC(2) and
"I>                 ZTONGUE_$SYNCVMLC(2)<=ZGROOVE_$SYNCVMLC(3).
"I>              2. For TARGET and FULL leaves to fit together (FULL
"I>                 leaf on -X [ORIENT=0] or -Y [ORIENT=1] side of TARGET
"I>                 leaf only) ZTONGUE_$SYNCVMLC(2)<=ZGROOVE_$SYNCVMLC(1)
"I>              3. For ISOCENTER and FULL leaves to fit together (FULL
"I>                 leaf on +X [ORIENT=0] or +Y [ORIENT=1] side of ISOCENTER
"I>                 leaf only) ZTONGUE_$SYNCVMLC(1)<=ZGROOVE_$SYNCVMLC(3)
"I>
"I>
"I>   Repeat 8 NGROUP_$SYNCVMLC times
"I>
"I>   8  NUM_LEAF_$SYNCVMLC(I), LEAFTYPE  (2I5)
"I>
"I>        NUM_LEAF_$SYNCVMLC(I): Number of adjacent leaves in group I
"I>                    LEAFTYPE: Type of leaf in group I.
"I>                              Set to: 1 for FULL leaves
"I>                                      2 for TARGET/ISOCENTER pair with
"I>                                        TARGET leaf on the -X (ORIENT=0)
"I>                                        or -Y (ORIENT=1) side
"I>
"I>         Note: If LEAFTYPE is 2, then you must have an even number
"I>               of leaves in the group.
"I>
"I>   9  START_$SYNCVMLC (F15.0) : the start position (cm) wrt the CAX of
"I>                       leaf 1 as projected to ZMIN_$SYNCVMLC.
"I>
"I>  10  LEAFGAP_$SYNCVMLC (F15.5) : The width of the interleaf air gap
"I>             at ZMIN_$SYNCVMLC.
"I>
"I>            Note restriction: LEAFGAP_$SYNCVMLC<=WTONGUE_$SYNCVMLC(1,2,3),
"I>
"I>  11  ENDTYPE_$SYNCVMLC (I5) : The  type of leaf end :
"I>             0 -- rounded leaf end and
"I>             1 -- focused divergent leaf end.
"I>
"I>  12  ZFOCUS_$SYNCVMLC (F15.5) : Focal point on Z-axis of leaf ends
"I>                     (i.e. imaginary lines drawn extending the slopes
"I>                     of leaf ends will all intersect the Z-axis
"I>                     at this point) - chosen if ENDTYPE_$SYNCVMLC = 1.
"I>
"I>        Note restriction: ZFOCUS_$SYNCVMLC(1) < ZMIN_$SYNCVMLC or
"I>                                     > ZMIN_$SYNCVMLC + ZTHICK_$SYNCVMLC
"I>
"I>      LEAFRADIUS_$SYNCVMLC (F15.5) : Radius of the leaf end if
"I>                           ENDTYPE_$SYNCVMLC = 0. This must be greater
"I>                           than or equal to half the leaf thickness.
"I>
"I>  13  ZFOCUS_$SYNCVMLC(1) (F15.5): Focal point on Z-axis of leaf sides
"I>                        imaginary lines drawn extending the slopes of
"I>                        the leaf sides will all intersect the Z-axis
"I>                        at this point)
"I>
"I>        Note restriction: ZFOCUS_$SYNCVMLC(1) < ZMIN_$SYNCVMLC or
"I>                               > ZMIN_$SYNCVMLC + ZTHICK_$SYNCVMLC
"I>
"I>                      For focused ends the leaf position is defined
"I>                      at ZMIN_$SYNCVMLC; for rounded at ZMIN_$SYNCVMLC +
"I>                     0.5*ZTHICK_$SYNCVMLC (ie center of the leaf in z)
"I>
"I>      If MODE_$SYNCVMLC=0 (static field):
"I>
"I>     Repeat 14a until opening coordinates of all leaves are defined once.
"I>     Leaves are numbered 1,2,...TOT_LEAF_$SYNCVMLC, where numbering goes from
"I>     leaf 1 to leaf TOT_LEAF_$SYNCVMLC. Convention is lower to upper or
"I>     left to right depending on ORIENT_$SYNCVMLC i.e from negative to
"I>     positive.  Note that for dynamic or step-and-shoot simulations, these
"I>     are the default coordinates, used unless specified otherwise in the
"I>     file of leaf opening data input in line 14a (see below).
"I>
"I>  14a  NEG_$SYNCVMLC, POS_$SYNCVMLC, NUM_$SYNCVMLC (2F15.5,I5)
"I>
"I>     NEG_$SYNCVMLC:  Min. Y (ORIENT_$SYNCVMLC=0) or X (ORIENT_$SYNCVMLC=1)
"I>                    of front opening in leaf I (ie the opening at
"I>                    ZMIN_$SYNCVMLC) if ENDTYPE=1, or of rounded end
"I>                    of leaf I if ENDTYPE=0.
"I>     POS_$SYNCVMLC:  Max. Y (ORIENT_$SYNCVMLC=0) or X (ORIENT_$SYNCVMLC=1)
"I>                    of front opening in leaf I if ENDTYPE=1, or of
"I>                    rounded end of leaf I if ENDTYPE=0.
"I>     NUM_$SYNCVMLC:  Apply NEG_$SYNCVMLC and POS_$SYNCVMLC to leaves
"I>                    I,...,I+NUM_$SYNCVMLC-1.  Defaults to 1 if set <=0.
"I>                    Defaults to TOT_LEAF_$SYNCVMLC-I+1 if set >
"I>                    TOT_LEAF_$SYNCVMLC-I+1.
"I>
"I>  If MODE_$SYNCVMLC=1 or 2 (dynamic delivery or step-and-shoot delivery):
"I>
"I>  14b  mlc_file (A256)
"I>
"I>         mlc_file:  The full name of the file containing leaf opening
"I>                    data.  The format of the file contents is as follows:
"I>
"I>      MLC_TITLE (A80)
"I>      NFIELDS_$SYNCVMLC (I10)
"I>      FOR I=1,NFIELDS_$SYNCVMLC[
"I>       INDEX_$SYNCVMLC(I) (F15.0)
"I>       NEG_$SYNCVMLC, POS_$SYNCVMLC, NUM_$SYNCVMLC (2F15.0,I5) -- repeat this
"I>                                                               line until
"I>                                                               coordinates
"I>                                                               for all leaves
"I>                                                               have been
"I>                                                               defined for
"I>                                                               field I.
"I>      ]
"I>
"I>      where:
"I>
"I>             MLC_TITLE:  A title line
"I>      NFIELDS_$SYNCVMLC:  Total number of fields
"I>     INDEX_$SYNCVMLC(I):  Index of field I. 0 <= INDEX_$SYNCVMLC(I) <= 1 and
"I>                         INDEX_$SYNCVMLC(I) > INDEX_$SYNCVMLC(I-1).  This
"I>                         number is compared to a random number on (0,1) at
"I>                         the start of each history; if the random number is
"I>                         <= INDEX_$SYNCVMLC(I), then field I is used.
"I>          NEG_$SYNCVMLC:  Min. Y (ORIENT_$SYNCVMLC=0)
"I>                         or X (ORIENT_$SYNCVMLC=1)
"I>                         of front opening in leaf (ie the opening at
"I>                         ZMIN_$SYNCVMLC) if ENDTYPE=1, or of rounded end
"I>                         of leaf if ENDTYPE=0 for leaf J in field I.
"I>          POS_$SYNCVMLC:  Max. Y (ORIENT_$SYNCVMLC=0)
"I>                         or X (ORIENT_$SYNCVMLC=1)
"I>                         of front opening in leaf if ENDTYPE=1, or of
"I>                         rounded end of leaf if ENDTYPE=0 for leaf J in
"I>                         field I.
"I>          NUM_$SYNCVMLC:  Apply NEG_$SYNCVMLC and POS_$SYNCVMLC to leaves
"I>                         J,...,J+NUM_$SYNCVMLC-1.  Defaults to 1 if set <=0.
"I>                         Defaults to TOT_LEAF_$SYNCVMLC-J+1 if set >
"I>                         TOT_LEAF_$SYNCVMLC-J+1.
"I>
"I>    Note that the inputs NEG_$SYNCVMLC, POS_$SYNCVMLC and NUM_$SYNCVMLC have
"I>    the same meanings as in 14a (static field inputs) but that they must
"I>    now be repeated for every field I.
"I>
"I>  15   ECUT, PCUT, DOSE_ZONE, IREGION_TO_BIT in opening(s) and
"I>                                             air gaps (2F15.5,2I5)
"I>
"I>        ECUT, PCUT:  Cutoff energies for electrons and photons.
"I>         DOSE_ZONE:   Dose scoring flag, 0 to not score dose
"I>    IREGION_TO_BIT:   Bit number associated with this region
"I>
"I>  16  MED_IN (24A1):  Medium in opening(s) and air gaps
"I>                      used to set MED_INDEX.
"I>
"I>  17  ECUT, PCUT, DOSE_ZONE, IREGION_TO_BIT in leaves, IGNOREGAPS_$SYNCVMLC
"I>                                                         (2F15.0,3I5):
"I>
"I>        ECUT, PCUT:  Cutoff energies for electrons and photons.
"I>         DOSE_ZONE:   Dose scoring flag, 0 to note score dose
"I>    IREGION_TO_BIT:   Bit number associated with this region
"I>        IGNOREGAPS:   If set to 1, ignore all air gaps and driving screw
"I>                      holes when doing range
"I>                      rejection in leaf material when the particle X position
"I>                      is < min X of all leaf openings (not including leaf
"I>                      ends) or > max X of leaf openings (not including ends)
"I>                      (ORIENT_$SYNCVMLC=1) or if the particle Y position
"I>                      is < min Y of all leaf openings (not including leaf
"I>                      ends) or > max Y of leaf openings (not including ends)
"I>                      (ORIENT_$SYNCVMLC=0). This approximation is designed
"I>                      to make range rejection more efficient deep in the
"I>                      leaves, while still preserving accurate transport
"I>                      in the leaf ends.  Note that if you have significant
"I>                      air gaps between leaves or are concerned with the
"I>                      effects of the driving screw holes it is recommended
"I>                      that you not use this option (ie run with the default
"I>                      setting of 0).
"I>
"I>  18  MED_IN (24A1):  Medium of leaves,
"I>                      used to set MED_INDEX.
"I>
"I>  19  ECUT, PCUT, DOSE_ZONE, IREGION_TO_BIT in driving screw holes
"I>                                                       (2F15.5,2I5):
"I>
"I>        ECUT, PCUT:  Cutoff energies for electrons and photons.
"I>         DOSE_ZONE:   Dose scoring flag, 0 to note score dose
"I>    IREGION_TO_BIT:   Bit number associated with this region
"I>
"I>  20  MED_IN (24A1):  Medium in driving screw holes,
"I>                      used to set MED_INDEX.
"I>
"I>   Example
"I>   *******
"I>
"I>   The following example defines a multi-leaf tungsten collimator design
"I>   based loosely on that used with the Varian Millenium MLC.
"I>   Actual parameters are DIFFERENT - this serves just as a template.
"I>   Do not attempt to use these parameters for a simulation of the real
"I>   machine.
"I>
"I>   The collimator starts at Z=48.25 cm and has 60 tungsten leaves opening
"I>   in the X direction. Leaves 1-10 and 51-60 are FULL and leaves 11-50 are
"I>   TARGET/ISOCENTER pairs.  The Z focus of the leaf sides is at Z=0 cm
"I>   which is the position of the source. The leaf ends are rounded with a
"I>    radius of 8 cm. In this example, leaf opening coordinates are chosen to
"I>   create a square of width ~ 2cm centred on the beam axis.
"I>
"I>   Electrons and photons in both the collimator and the opening regions
"I>   will be followed down to kinetic energies of 189 keV (ECUT=0.7,
"I>   PCUT=0.01).  Dose deposited in the tungsten leaves will be stored
"I>   in dose zone 2, and dose deposited in the opening will be stored
"I>   in dose zone 1.
"I>
"I> 20.5, RMAX
"I> CL21X - Millenium MLC
"I> 1, 3, ORIENT, NGROUP
"I> 48.25, ZMIN
"I> 6.7, ZTHICK
"I> 0.5, 0.04, 0.04, 0.1354, 0.3252, 0.1227, 48.25, 48.533, 51.524, 51.732,
"I>   52.98, 53.28, 2, 54.5474, 54.812, FULL leaf
"I> 0.25, 0.04, 0.04, 0.0929, 0.1371, 0.1371, 48.345, 48.6096, 49.5277,
"I>   49.8277, 2, 51.625, 51.627, 54.7, 54.746, TARGET leaf
"I> 0.25, 0.04, 0.04, 0.0354, 0.1285, 0.1235, 48.412, 48.531, 51.631, 51.732,
"I>   53.3293, 53.6293, 2, 54.5474, 54.812, ISOCENTER leaf
"I> 10, 1, FULL leaves
"I> 40, 2, TARGET/ISOCENTER pairs
"I> 10, 1, FULL leaves
"I> -10.2, START
"I> 0.006, LEAFGAP
"I> 0, ENDTYPE
"I> 8, ZFOCUS or RADIUS of leaf ends
"I> 0, ZFOCUS of leaf sides
"I> 0, 0, 26
"I> -1.0, 1.0, 8
"I> 0,0,26
"I> 0.7, 0.01, 1, 0,
"I> AIR521ICRU
"I> 0.7, 0.01, 2, 0, 0,
"I> W521ICRU
"I> 0.7, 0.01, 3, 0,
"I> AIR521ICRU
;
"*************************************************************************
"*************************  ERROR CONDITIONS  ****************************
"*************************************************************************
"
"                              SIMULATION PARAMETERS
"                              *********************
"
" Geometry checks:
" ****************
"
"   1)  Overlapping component modules
"
"***********************************************************************
;
%E "Start of subroutine HOWFAR_$SYNCVMLC"
"************************************************************************
"********************Component Module SYNCVMLC *****************************
"************************************************************************
"
"                          Subroutine HOWFAR_$SYNCVMLC
"                          ***********************
"
" HOWFAR routine for stacked planar media.
"
" Determine if current region number is within component module SYNCVMLC,
" evaluate DIST, distance to region boundary along current trajectory.
" USTEP must not exceed DIST.
"
"   There are N_$SYNCVMLC local regions + an air gap (if present):
"
"  local              absolute                                   description
"-------------- --------------------------------------------- ---------------
"IR_$SYNCVMLC IR_start_CM(ICM_$SYNCVMLC)+IR_$SYNCVMLC-1 exclude front air gap
"-------------- --------------------------------------------- ---------------
"   Geometrical co-ordinates, as set in INPUT_$SYNCVMLC are:
"
"   ZFRONT_$SYNCVMLC     front of CM (upstream surface, air region)
"   ZMIN_$SYNCVMLC       front of cone
"   ZBACK_$SYNCVMLC      back of cone
"   RMAX_$SYNCVMLC       radius of last cylinder (largest)
"
"*************************************************************************
;
;SUBROUTINE HOWFAR_$SYNCVMLC;

"V>$GEO_SHIFT_1_(#)
"V>=============
"V>{p1} the value to compare with ustep
"V> if {p1}+1.0e-5 < ustep shift it, otherwise no shift
;
REPLACE {$GEO_SHIFT_1_(#)} WITH {
  ;IF({P1}~=0.00 ) [
    IF({P1}+1.0E-5< USTEP) [{P1}={P1}+1.0E-5;]
   ]
   ELSE [{P1}={P1}+1.0E-5;];

}

;IMPLICIT NONE;
;COMIN/CMs,CM_$SYNCVMLC,EPCONT,STACK,USER,EGS-IO/;
"T>
"T>**********************************
"T>TYPE DECLARATIONS FOR HOWFAR_$SYNCVMLC
"T>**********************************
"T>
INTEGER
   COUNT,
   IRL,        "T>local region number (absolute), required by HOWNEAR macro
   I, J,        "T>loop control
   REGION_$SYNCVMLC,     "T>region number within CM (relative)
   NEWREGION_$SYNCVMLC,     "T>region number within CM (relative)
   NX,NY,NZ,        "T> Subindices for region
   OUTOFCMFLAG,     "T> Flag to denote particle out of CM
   OUTOFMLCFLAG,    "T> Flag to denote particle out of MLC
   LEAFIS,          "T> Leaf number
   LHS,RHS,     "T> Macro variables to find + and - closest boundary index
   ZLHS,ZRHS,
   IDIR;        "T> direction sign, used in call to where_am_i

DOUBLE PRECISION
   DIST,      "T>Distance to z boundary along current particle trajectory
   UVL(2),    "T>temporary variable
   TRYY1,TRYY2,
   XoN,XoP,    "T> Negative and Positive leaf centers (rounded leaf)
   Zo,         "T> z position of rounded leaf tip
   XP,XN,YP,YN,ZP,ZN,    "T>+ and - distances in x,y, z directions
   XDIST,YDIST,ZDIST,    "T> x,y, Z distances to nearest boundaries
   DIST1,DIST2,DIST3,    "T> Variables to control particle propagation
   STEP2,                "T>  "
   TLHS,TRHS,            "T> temporary macro variables like lhs,rhs
   DISCRIMINANT,         "T> Variable for rounded leaf
   TEMP,TEMP1, TEMP2, TEMP3, TEMP4, TEMP5, HOLE,
   STEP_UNIT,
   XYL(2),     "T> rearranged x and y coordinates
   XYFL(2),
   ZFL;

$REAL one;
parameter (one = 1);

" prepare the local variables "
"============================="

IRL = IR(NP); "local region number (absolute)"
IR_$SYNCVMLC = IRL - IRSTART_$SYNCVMLC + 1;   "rel. local region number"
IF(ORIENT_$SYNCVMLC=1) [
    XYL(1)=Y(NP); XYL(2)=X(NP);UVL(1)=V(NP);UVL(2)=U(NP);]
ELSE[ XYL(1)=X(NP); XYL(2)=Y(NP);UVL(1)=U(NP);UVL(2)=V(NP);]
;

STEP_UNIT=0.0;
COUNT = 0;
OUTOFCMFLAG=0;
OUTOFMLCFLAG=0;

" Boundary-crossing check
" ***********************
"
" Determine if current region number is within component module ,if so
" evaluate DIST, distance to region boundary along current trajectory.
" USTEP must not exceed DIST.
"

" the following block double check:
"=================================
"      1. the particle is out of the CM or regions in z direction
"      2.                        the regions in xy directions
"     if so reset the ir #, and print out the warning message.
"comment: this block is not time consumming, can be kept in the final version
"=======
"
"  now do the air gap check if existed.
"=====================================
"

IF(N_GAP_$SYNCVMLC=1 & IR_$SYNCVMLC=4 ) ["Check the air gap first"
   IF(W(NP)>0.0) ["Particle going forward"
      DIST = (ZMIN_$SYNCVMLC - Z(NP))/W(NP); "distance to front of CM"
      IF(DIST <= 0.0) [
          USTEP=0.0;
          $SYNCVMLC_FIND(IR_$SYNCVMLC, 0.0);
          IF( IR_$SYNCVMLC=1 ) "in air"
            [IRNEW =IRSTART_$SYNCVMLC; RETURN;]
          ELSE[IRNEW =IRSTART_$SYNCVMLC+1; RETURN;]
       ] "double check if a particle is out of the AIR GAP"
    ]
   ELSEIF(W(NP)<0.0) [ "particle going backward"
      DIST = (ZFRONT_$SYNCVMLC - Z(NP))/W(NP); "distance to front of CM"
      IF(DIST <= 0.0) [
          USTEP=1.E-16;
          CALL WHERE_AM_I(ICM_$SYNCVMLC,-1);
          RETURN;
      ] " double check if a particle is out of the CM"
    ];
 ]
ELSEIF(IR_$SYNCVMLC=1 | IR_$SYNCVMLC=2 | IR_$SYNCVMLC=3) [
   IF(W(NP) > 0.0) ["particle going forward"
      DIST = (ZMAX_$SYNCVMLC - Z(NP))/W(NP); "distance to back of CM"
      IF(DIST>USTEP) [ STEP_UNIT=USTEP; ]
      ELSE [ STEP_UNIT=DIST;  ]
      IF(DIST <=0.0) [
          USTEP=1.E-16;"ensures call to AUSGAB on leaving CM"
          CALL WHERE_AM_I(ICM_$SYNCVMLC,1);
          RETURN;
       ] "double check if a particle is out of the CM"
    ]
   ELSEIF(W(NP) < 0.0) [
     "particle going backward"
      DIST = (ZMIN_$SYNCVMLC - Z(NP))/W(NP); "distance to back of CM "
      IF(DIST>USTEP) [ STEP_UNIT=USTEP;  ]
      ELSE [ STEP_UNIT=DIST; ]
      IF(DIST <= 0.0) [
          USTEP=0.0;
          IF(N_GAP_$SYNCVMLC = 1)
            [IRNEW =IREND_$SYNCVMLC; RETURN; ]
          ELSE[ USTEP=1.E-16; CALL WHERE_AM_I(ICM_$SYNCVMLC,-1); RETURN; ]
      ] " double check if a particle is out of the main body to air gap"
    ]
   ELSE[STEP_UNIT=USTEP;]  " for w(np)=0.0 case"
 ];

" end of z direction check
"=========================

$SYNCVMLC_FIND(REGION_$SYNCVMLC,0.0);

IF(REGION_$SYNCVMLC=4) [ "Particle is in the air gap "
  REGION_$SYNCVMLC=IRSTART_$SYNCVMLC-1+REGION_$SYNCVMLC;
   IF(W(NP) > 0.0)[
    IF(DIST <= USTEP ) ["particle to be moved to region boundary"
      $GEO_SHIFT_1_(DIST);
      USTEP = DIST;
      $SYNCVMLC_FIND(NEWREGION_$SYNCVMLC,USTEP);
      IF( NEWREGION_$SYNCVMLC=1) [IRNEW =IRSTART_$SYNCVMLC; RETURN;]
      ELSE[IRNEW =IRSTART_$SYNCVMLC+1; RETURN;]
    ]
    ELSE[ RETURN;];
    ] "end of particle going forward"
    ELSEIF(W(NP) < 0.0) ["particle going backward"
      IF(DIST <= USTEP ) ["particle to be moved to region boundary"
        $GEO_SHIFT_1_(DIST);
        USTEP = DIST;
        CALL WHERE_AM_I(ICM_$SYNCVMLC,-1);
        RETURN;
        ]
      ELSE [RETURN;]
    ] " end of going backward"
    ELSE[RETURN;];   " W=0.0 CASE "
] ;" end of region 4"


IF(OUTOFMLCFLAG=1) [

"discard particle if it is outside lateral edges of MLC.  This was the
"intent of the original programmer, but we do not want to do this in general.
"  IF(Z(NP)>=ZMIN_$SYNCVMLC & Z(NP)<=ZMAX_$SYNCVMLC) [
"    TEMP1=SURPARA1_$SYNCVMLC(1,1)*(ZFL-ZFOCUS_$SYNCVMLC(1));
"    TEMP2=SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,7)*
"          (ZFL-ZFOCUS_$SYNCVMLC(1));
"    IF(XYFL(1)<=TEMP1|XYFL(1)>=TEMP2)[
"      IDISC=1; RETURN;];
"   ];

  STEP2=STEP_UNIT;
  TEMP1=(SURPARA1_$SYNCVMLC(1,1)*(ZFL-ZFOCUS_$SYNCVMLC(1))-XYFL(1));
  IF( (UVL(1)-SURPARA1_$SYNCVMLC(1,1)*W(NP))~=0.0 ) [
     TEMP1=TEMP1/(UVL(1)-SURPARA1_$SYNCVMLC(1,1)*W(NP));
   ]
  ELSE [ TEMP1 = -1000.00 ];

  TEMP2=(SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,7)*
        (ZFL-ZFOCUS_$SYNCVMLC(1))-XYFL(1));
  IF( (UVL(1)-SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,7)*W(NP))~=0.0 ) [
    TEMP2=TEMP2/(UVL(1)-SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,7)*W(NP));
  ]
  ELSE [ TEMP2 = -1000.00 ];

  IF( STEP2>=0.0)[
    TEMP=STEP2;
    IF( TEMP1>=0 ) [TEMP=MIN(TEMP,TEMP1);];
    IF( TEMP2>=0 ) [TEMP=MIN(TEMP,TEMP2);];
  ]
  ELSEIF ( (TEMP1>0.0) & (TEMP2>0.0) ) [TEMP=MIN(TEMP1,TEMP2);]
  ELSE [TEMP=MAX(TEMP2,TEMP1);];

  STEP2 = TEMP;

  $GEO_SHIFT_1_(STEP2);
  $SYNCVMLC_FIND(IRNEW,STEP2);
  IRNEW=IRNEW+IRSTART_$SYNCVMLC-1;
  USTEP=STEP2;
  RETURN;
 ]
;
$SYNCVMLC_MINDISTANCE(DIST1);

IF((DIST1>=STEP_UNIT) | (DIST1<0)) [
    STEP2=STEP_UNIT;
    $GEO_SHIFT_1_(STEP2);
    $SYNCVMLC_FIND(IRNEW,STEP2);
    USTEP=STEP2;
    IF(OUTOFCMFLAG=1)[ "call where_am_i"
       IDIR=SIGN(one,W(NP));
       CALL WHERE_AM_I(ICM_$SYNCVMLC,IDIR);
       RETURN;
    ]
    ELSE[
      IRNEW=IRNEW+IRSTART_$SYNCVMLC-1;
      RETURN;
    ]
]
ELSEIF( (STEP_UNIT>DIST1) & (DIST1>=0)) [
    REGION_$SYNCVMLC=REGION_$SYNCVMLC+IRSTART_$SYNCVMLC-1;
    LOOP[
      DIST1=DIST1+1.0E-5; "we have to shift it regardless to avoid "
                          "infinite loops"
      IF(DIST1>=STEP_UNIT)[EXIT;]
      ELSE[
        $SYNCVMLC_FIND(NEWREGION_$SYNCVMLC,DIST1);
        NEWREGION_$SYNCVMLC=NEWREGION_$SYNCVMLC+IRSTART_$SYNCVMLC-1;
        IF( OUTOFCMFLAG=1 ) [ EXIT;]
        ELSEIF( (NEWREGION_$SYNCVMLC~=REGION_$SYNCVMLC) | OUTOFMLCFLAG=1 )[
        USTEP = MIN(USTEP,DIST1); "take min. because we shifted DIST1"
        IRNEW = NEWREGION_$SYNCVMLC;
        RETURN;
       ]
       ELSE [
         $SYNCVMLC_MINDISTANCE(DIST2);
         DIST1=DIST1+DIST2;
       ];
      ]
    ];
;
"if it gets here, then it exited either because OUTOFCMFLAG=1"
"or because DIST1 >= STEP_UNIT, in either case DIST1 >= STEP_UNIT"
;
    DIST1=STEP_UNIT;
    $GEO_SHIFT_1_(DIST1);
    USTEP = DIST1;

    IF( OUTOFCMFLAG=0 ) [
      $SYNCVMLC_FIND(NEWREGION_$SYNCVMLC,DIST1);
      "still have to check if we have left the CM in case STEP_UNIT"
      "was the distance to the bottom of the CM"
      IF(OUTOFCMFLAG=1)[
        IDIR=SIGN(one,W(NP));
        CALL WHERE_AM_I(ICM_$SYNCVMLC,IDIR);
        RETURN;
      ]
      ELSE["not leaving CM"
        NEWREGION_$SYNCVMLC=NEWREGION_$SYNCVMLC+IRSTART_$SYNCVMLC-1;
        IRNEW = NEWREGION_$SYNCVMLC;
        RETURN;
      ]
    ]
    ELSE[ "call where_am_i"
       "since flag is based on distance to Z bdy, DIST1 is >= STEP_UNIT now"
       IDIR=SIGN(one,W(NP));
       CALL WHERE_AM_I(ICM_$SYNCVMLC,IDIR);
       RETURN;
    ]

]; "End of IF loop for step_unit>dist1

;
"   end of HOWFAR_$SYNCVMLC
"   ===================
"
RETURN;
END; "End of subroutine HOWFAR_$SYNCVMLC"
%E "Start of WHERE_AM_I_$SYNCVMLC"
"************************************************************************
"
"                          Subroutine WHERE_AM_I_$SYNCVMLC
"                          ***************************
"
" WHERE_AM_I routine for a stacked right cylinder slabs.
"
" WHERE_AM_I_$SYNCVMLC determines the new region number when a particle
" traverses a component module boundary.  The scheme is as follows:
"
"      Whenever a particle is to be transported to a component module
"      boundary in HOWFAR, the subroutine WHERE_AM_I is called.  The
"      current component module and particle direction (backwards or
"      forwards) are transferred to WHERE_AM_I in the CALL statement.
"      WHERE_AM_I determines which component module the particle is
"      about to enter and calls the WHERE_AM_I_$SYNCVMLC subroutine for
"      that component module, transferring the particle direction.
"      The region number that the particle is about to enter is
"      determined in WHERE_AM_I_$SYNCVMLC from the knowledge of which
"      surface the particle is entering through (front if IDIR=1,
"      back if IDIR=-1) and the (X,Y) coordinates of the particle.
"      The current particle being transported is NP (in /STACK/).
"
"*************************************************************************

;SUBROUTINE WHERE_AM_I_$SYNCVMLC(IDIR);
;
;IMPLICIT NONE;
;COMIN/CM_$SYNCVMLC,EPCONT,STACK,CMs,USER/;
"T>
"T>**************************************
"T>TYPE DECLARATIONS FOR WHERE_AM_I_$SYNCVMLC
"T>**************************************
"T>
INTEGER NX,NY,NZ,   "T>Indices of subregions
        I,
        OUTOFCMFLAG, "Flags to denote out of CM and
        OUTOFMLCFLAG, " MLC respectively
        LEAFIS,       " Leaf number
        IDIR;  "T>direction of particle, +1=forward, -1=backward
DOUBLE PRECISION   XYL(2), XYFL(2), ZFL, UVL(2), XoN, XoP, Zo, TEMP1, TEMP2,
                   TEMP3, TEMP4, HOLE;

IF(ORIENT_$SYNCVMLC=1)
    [ XYL(1)=Y(NP); XYL(2)=X(NP);UVL(1)=V(NP);UVL(2)=U(NP);]
ELSE[ XYL(1)=X(NP); XYL(2)=Y(NP);UVL(1)=U(NP);UVL(2)=V(NP);];
IF (IDIR=1) [
 "particle entering this CM through front face (upstream)"
   IF(N_GAP_$SYNCVMLC = 0) [ "no air gap this CM"
       IF(IRSTART_$SYNCVMLC=2)   " the first CM"
         [$SYNCVMLC_FIND(IR_$SYNCVMLC,0.0); ]
       ELSE[$SYNCVMLC_FIND(IR_$SYNCVMLC, USTEP);]
       IF(IR_$SYNCVMLC=1)
         [IRNEW=IRSTART_$SYNCVMLC; RETURN;]
       ELSE[ IRNEW=IRSTART_$SYNCVMLC+1; RETURN; ]
    ]         " end of the no air gap case"
   ELSE [ "this CM has an air gap at the front"
      IRNEW = IREND_$SYNCVMLC;
        ]
 ]

ELSE [ "particle entering CM through back face (downstream)"
   $SYNCVMLC_FIND(IR_$SYNCVMLC, USTEP);
   IF(IR_$SYNCVMLC=1)
     [IRNEW=IRSTART_$SYNCVMLC; RETURN;]
   ELSE[ IRNEW=IRSTART_$SYNCVMLC+1; RETURN; ]
 ];

RETURN;
;
END; "End of subroutine WHERE_AM_I_$SYNCVMLC"
%E "Start of subroutine INPUT_$SYNCVMLC"

"*************************************************************************

"                           Subroutine INPUT_$SYNCVMLC
"
"*************************************************************************
"*************************************************************************

"  A CM input subroutine for a series of 2 or more slabs.
"
"  It must fill all parameters in COMMON/CMs/ associated with this CM.
"
"  Routine prints error messages on unit 6 for
"      format error on input
"      end of file hit
"      error in logic of input file
"
"  The format of the input is presented in the section INPUT FROM UNIT 5
"   in the above documentation.
"
"************************************************************************

;SUBROUTINE INPUT_$SYNCVMLC;
;

;IMPLICIT NONE;
;COMIN/ BOUNDS,CMs,CM_$SYNCVMLC,GEOM,IO_INFO,MEDIA,MISC,SCORE,USER,EGS-IO/;

"  **************************************************************** "
"              TYPE DECLARATIONS FOR INPUT_$SYNCVMLC
"  **************************************************************** "

DOUBLE PRECISION  NEG_$SYNCVMLC,     "T>Leaf B tip
                  POS_$SYNCVMLC,     "T>Leaf A Tip
                  TEMP1,
                  TEMP2;

INTEGER I,J,K,L,        "T>DO loop indices
        IRA,            "T>Absolute region number
        MED_FLAG,       "T>flag used by media-sort macro $MED_INPUT
        MED_INDEX,   "T>medium index, set after medium sort by $MED_INPUT
     NUM_$SYNCVMLC, "T>number of adjacent leaves with same opening coordinates
       LEAFTYPE,     "T>temporary input variable for LEAFTYPE
       MIN_INDEX,   "T>index of leaf with min. opening coordinate
       MAX_INDEX,   "T>index of leaf with max. opening coordinate
       mlc_unit,    "T>unit no. to assign mlc_file
       egs_get_unit; "T>egs function used to assign unit to mlc_file
character*256 mlc_file;
CHARACTER*80 MLC_TITLE; "T> title line in mlc_file
$REAL INDEXTMP; "T>temporary input variable for field indices in dynamic and
                "  step-and-shoot simulations
" **************************************************************** "

"                 STEP I : INITIALIZE PARAMETERS
"                          =====================

" **************************************************************** "


"I. GET THE TITLE "
"================ "
;
OUTPUT;(/' Next component is a VARIAN type MLC'/' Title: ',$);
MINPUT ($SYNCVMLC) TITLE_$SYNCVMLC;(60A1);
          "MINPUT is a replacement macro with EOF and
          "ERR branching to :EOF_{P1}: and :ERR_{P1}:
OUTPUT TITLE_$SYNCVMLC;(' ',60A1);
            "OUTPUT is a replacement macro which writes to
            "unit 5.  Used here for echo of user input

"II. CHOOSE THE SYNCVMLC ORIENTATION "
"============================== "

OUTPUT; (' Input leaf orientation (0=parallel to y, 1=parallel to x) and '/
         ' no. of groups of leaves with equal width on one line'/' :',$);
MINPUT ($SYNCVMLC) ORIENT_$SYNCVMLC, NGROUP_$SYNCVMLC, MODE_$SYNCVMLC; (3I5);
OUTPUT ORIENT_$SYNCVMLC,NGROUP_$SYNCVMLC,MODE_$SYNCVMLC; (2I5/);
IF(ORIENT_$SYNCVMLC~=1) [
      ORIENT_$SYNCVMLC=0;
      OUTPUT;(/' Orientation defaults to 0.'/);
 ];
IF(NGROUP_$SYNCVMLC<=0) [
      NGROUP_$SYNCVMLC=1;
      OUTPUT;(/' No. of groups defaults to 1.'/);
 ];
IF(MODE_$SYNCVMLC<0 | MODE_$SYNCVMLC>2) [
      MODE_$SYNCVMLC=0;
      OUTPUT;(/' Mode of leaf opening input defaults to 0.'/);
 ];

"III. DESIGNATE REGION NUMBERS "
"============================= "

N_$SYNCVMLC = 3;
           "Number of regions in this CM (excluding front air gap)
ICM_$SYNCVMLC = ICM;      "CM index for this component module
IRSTART_$SYNCVMLC = IR_start_CM(ICM_$SYNCVMLC);
                      "Index of first region in this CM,
                      "set by previous CM or in MAIN if ICM=1
IERR_GEOM(ICM_$SYNCVMLC) = 0; "Geometry-checking flag, 0 if no error detected

"IV. GET DISTANCE FROM THE REFERENCE PLANE, z=0 "
"============================================== "
;
OUTPUT; (' Z position of top of Varian MLC (>=0) : ',$);
;MINPUT ($SYNCVMLC) ZMIN_$SYNCVMLC;(F12.5);
OUTPUT ZMIN_$SYNCVMLC;(F12.5/);
IF(Z_min_CM(ICM_$SYNCVMLC)>ZMIN_$SYNCVMLC) [
   IF(ICM_$SYNCVMLC=1) [
      Z_min_CM(ICM_$SYNCVMLC)=ZMIN_$SYNCVMLC;
      OUTPUT ICM_$SYNCVMLC, Z_min_CM(ICM_$SYNCVMLC);
     (//' ***WARNING IN CM ',I4,' ($SYNCVMLC):'/
           ' Z_min_CM(1)  > distance to front of MLC '/
           ' Z_min_CM(1) reset to ',F8.5,' cm'//);
      WRITE(IOUTLIST,
     '(//'' ***WARNING IN CM '',I4,'' ($SYNCVMLC):''/
          '' Z_min_CM(1)  > distance to front of collimator''/
          '' Z_min_CM(1) reset to '',F8.5,'' cm''//)')
          ICM_$SYNCVMLC, Z_min_CM(ICM_$SYNCVMLC);
     ]
    ELSE[
      OUTPUT ICM_$SYNCVMLC;
       (//' ***** WARNING WARNING WARNING *****'/
          ' ***ERROR IN CM ',I4,' ($SYNCVMLC):'/
          ' Overlaps with previous CM'/
          ' Error will be propagated'//);
      WRITE(IOUTLIST,
         '(//'' ***WARNING IN CM '',I4,'' ($SYNCVMLC):''/
          '' Overlaps with previous CM''//)')
          ICM_$SYNCVMLC;
      IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
     ]
 ]
;
" ************************************************************** "

"              STEP TWO : GET SYNCVMLC GEOMETRY INFORMATION
"                         ============================

" ************************************************************** "

" I. THICKNESS OF LEAVES "
" ======================= "
;

OUTPUT; (' MLC Leaf thickness (cm):',$);
MINPUT ($SYNCVMLC) ZTHICK_$SYNCVMLC; (F15.0);
OUTPUT ZTHICK_$SYNCVMLC;(F15.5, ' cm'/);

" Validate the user-input thickness "

IF(ZTHICK_$SYNCVMLC<0.0) [
    OUTPUT ICM_$SYNCVMLC;(//' ***ERROR IN CM ',I4,' ($SYNCVMLC):'/
                          ' ZTHICK < 0.0'//);
    IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
 ];

ZMAX_$SYNCVMLC = ZMIN_$SYNCVMLC + ZTHICK_$SYNCVMLC;
;

" II. Input geometries of FULL, ISOCENTER and TARGET leaves"
" =============================================================== "
;
OUTPUT;
(/' For FULL leaves input (all in cm, widths projected to ZMIN): '/
' leaf width (excl. tongue), width of tongue, width of groove, width of'/
' tip at top, width of top of support rail, width of bottom of support rail,'/
' Z of top of tip, Z of top of leaf, Z of bottom of tongue, Z of bottom of'/
' groove, Z of top of driving screw hole, Z of bottom of driving screw hole,'/
' distance of hole from leaf tip, Z of top of support rail, Z of bottom of'/
' support rail:'/);
MINPUT ($SYNCVMLC) LEAFWIDTH_$SYNCVMLC(1), WTONGUE_$SYNCVMLC(1),
      WGROOVE_$SYNCVMLC(1), WTIP_$SYNCVMLC(1), WRAILTOP_$SYNCVMLC(1),
      WRAILBOT_$SYNCVMLC(1), ZTIP_$SYNCVMLC(1), ZLEAF_$SYNCVMLC(1),
      ZTONGUE_$SYNCVMLC(1), ZGROOVE_$SYNCVMLC(1), ZHOLETOP_$SYNCVMLC(1),
      ZHOLEBOT_$SYNCVMLC(1), HOLEPOS_FULL_$SYNCVMLC, ZRAILTOP_$SYNCVMLC(1),
      ZRAILBOT_$SYNCVMLC(1); (15F15.0);
OUTPUT LEAFWIDTH_$SYNCVMLC(1), WTONGUE_$SYNCVMLC(1), WGROOVE_$SYNCVMLC(1),
      WTIP_$SYNCVMLC(1), WRAILTOP_$SYNCVMLC(1), WRAILBOT_$SYNCVMLC(1),
      ZTIP_$SYNCVMLC(1), ZLEAF_$SYNCVMLC(1), ZTONGUE_$SYNCVMLC(1),
      ZGROOVE_$SYNCVMLC(1), ZHOLETOP_$SYNCVMLC(1), ZHOLEBOT_$SYNCVMLC(1),
      HOLEPOS_FULL_$SYNCVMLC, ZRAILTOP_$SYNCVMLC(1), ZRAILBOT_$SYNCVMLC(1);
      (15F15.5);
"now do checks on input dimensions"
IF(WGROOVE_$SYNCVMLC(1)>LEAFWIDTH_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
   ' WGROOVE_$SYNCVMLC(1)>LEAFWIDTH_$SYNCVMLC(1).  Groove is too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WTIP_$SYNCVMLC(1)<WTONGUE_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' WTIP_$SYNCVMLC(1)<WTONGUE_$SYNCVMLC(1).  Tip is too narrow.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WTIP_$SYNCVMLC(1)>LEAFWIDTH_$SYNCVMLC(1)+WTONGUE_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' WTIP_$SYNCVMLC(1)>LEAFWIDTH_$SYNCVMLC(1)+WTONGUE_$SYNCVMLC(1)'/
      '                  -WGROOVE_$SYNCVMLC(1).  Tip is too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILTOP_$SYNCVMLC(1)>LEAFWIDTH_$SYNCVMLC(1)-WGROOVE_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' WRAILTOP_$SYNCVMLC(1)>LEAFWIDTH_$SYNCVMLC(1)+WGROOVE_$SYNCVMLC(1).'/
      ' Upper rail too wide.'//);
        IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILTOP_$SYNCVMLC(1)<WTIP_$SYNCVMLC(1)-WTONGUE_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' WRAILTOP_$SYNCVMLC(1)<WTIP_$SYNCVMLC(1)-WTONGUE_$SYNCVMLC(1).'/
      ' Upper rail too narrow or tip too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILBOT_$SYNCVMLC(1)>WRAILTOP_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' WRAILBOT_$SYNCVMLC(1)>WRAILTOP_$SYNCVMLC(1).  Lower rail too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILTOP_$SYNCVMLC(1)-WRAILBOT_$SYNCVMLC(1)<
   WTIP_$SYNCVMLC(1)-WTONGUE_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' WRAILTOP_$SYNCVMLC(1)-WRAILBOT_$SYNCVMLC(1)<'/
      ' WTIP_$SYNCVMLC(1)-WTONGUE_$SYNCVMLC(1).'/
      ' Lower rail too wide.  Or tip too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZTIP_$SYNCVMLC(1)<ZMIN_$SYNCVMLC)[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' ZTIP_$SYNCVMLC(1)<ZMIN_$SYNCVMLC.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZLEAF_$SYNCVMLC(1)<ZTIP_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' ZLEAF_$SYNCVMLC(1)<ZTIP_$SYNCVMLC.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZTONGUE_$SYNCVMLC(1)<ZLEAF_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' ZTONGUE_$SYNCVMLC(1)<ZTIP_$SYNCVMLC(1).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZGROOVE_$SYNCVMLC(1)<ZTONGUE_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' ZGROOVE_$SYNCVMLC(1)<ZTONGUE_$SYNCVMLC(1).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZHOLETOP_$SYNCVMLC(1)<ZGROOVE_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' ZHOLETOP_$SYNCVMLC(1)<ZGROOVE_$SYNCVMLC(1).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZHOLEBOT_$SYNCVMLC(1)<ZHOLETOP_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' ZHOLEBOT_$SYNCVMLC(1)<ZHOLETOP_$SYNCVMLC(1).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZRAILTOP_$SYNCVMLC(1)<ZHOLEBOT_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' ZRAILTOP_$SYNCVMLC(1)<ZHOLEBOT_$SYNCVMLC(1).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZRAILBOT_$SYNCVMLC(1)<ZRAILTOP_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' ZRAILBOT_$SYNCVMLC(1)<ZRAILTOP_$SYNCVMLC(1).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZRAILBOT_$SYNCVMLC(1)>ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC)[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in FULL leaf definition:'/
      ' ZRAILBOT_$SYNCVMLC(1)>ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]

OUTPUT;
(/' For TARGET leaves input (all in cm, widths projected to ZMIN): '/
' leaf width (excl. tongue), width of tongue, width of groove, width of'/
' tip at top, width of top of support rail, width of bottom of support rail,'/
' Z of top of support rail, Z of bottom of support rail, Z of top of driving'/
' screw hole, Z of bottom of driving screw hole, distance of hole from leaf'/
' tip, Z of bottom of tongue, Z of top of groove, Z of bottom of leaf, Z of'/
' bottom of tip:'/);
MINPUT ($SYNCVMLC) LEAFWIDTH_$SYNCVMLC(2), WTONGUE_$SYNCVMLC(2),
      WGROOVE_$SYNCVMLC(2), WTIP_$SYNCVMLC(2), WRAILTOP_$SYNCVMLC(2),
      WRAILBOT_$SYNCVMLC(2), ZRAILTOP_$SYNCVMLC(2), ZRAILBOT_$SYNCVMLC(2),
      ZHOLETOP_$SYNCVMLC(2), ZHOLEBOT_$SYNCVMLC(2), HOLEPOS_TAR_$SYNCVMLC,
      ZTONGUE_$SYNCVMLC(2), ZGROOVE_$SYNCVMLC(2), ZLEAF_$SYNCVMLC(2),
      ZTIP_$SYNCVMLC(2); (15F15.0);
OUTPUT LEAFWIDTH_$SYNCVMLC(2), WTONGUE_$SYNCVMLC(2), WGROOVE_$SYNCVMLC(2),
      WTIP_$SYNCVMLC(2), WRAILTOP_$SYNCVMLC(2), WRAILBOT_$SYNCVMLC(2),
      ZRAILTOP_$SYNCVMLC(2), ZRAILBOT_$SYNCVMLC(2), ZHOLETOP_$SYNCVMLC(2),
      ZHOLEBOT_$SYNCVMLC(2), HOLEPOS_TAR_$SYNCVMLC, ZTONGUE_$SYNCVMLC(2),
      ZGROOVE_$SYNCVMLC(2), ZLEAF_$SYNCVMLC(2), ZTIP_$SYNCVMLC(2); (15F15.5);
"check input dimensions"
IF(WGROOVE_$SYNCVMLC(2)>LEAFWIDTH_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' WGROOVE_$SYNCVMLC(2)>LEAFWIDTH_$SYNCVMLC(2).  Groove too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WTIP_$SYNCVMLC(2)>LEAFWIDTH_$SYNCVMLC(2)-WTONGUE_$SYNCVMLC(2)-
   WGROOVE_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' WTIP_$SYNCVMLC(2)>LEAFWIDTH_$SYNCVMLC(1)-WTONGUE_$SYNCVMLC(1)-'/
      '                  WGROOVE_$SYNCVMLC(1).  Tip too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILBOT_$SYNCVMLC(2)>LEAFWIDTH_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
   ' WRAILBOT_$SYNCVMLC(2)>LEAFWIDTH_$SYNCVMLC(2).  Lower rail too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILBOT_$SYNCVMLC(2)<WGROOVE_$SYNCVMLC(2)+WTIP_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' WRAILBOT_$SYNCVMLC(2)<WGROOVE_$SYNCVMLC(2)+WTIP_$SYNCVMLC(2).'/
      ' Lower rail too narrow.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILTOP_$SYNCVMLC(2)>WRAILBOT_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' WRAILTOP_$SYNCVMLC(2)>WRAILBOT_$SYNCVMLC(2).  Top rail too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILTOP_$SYNCVMLC(2)<WRAILBOT_$SYNCVMLC(2)-WGROOVE_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' WRAILTOP_$SYNCVMLC(2)<WRAILBOT_$SYNCVMLC(2)-WGROOVE_$SYNCVMLC(2).'/
      ' Top rail too narrow.'//);
        IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZRAILTOP_$SYNCVMLC(2)<ZMIN_$SYNCVMLC)[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' ZRAILTOP_$SYNCVMLC(2)<ZMIN_$SYNCVMLC.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZRAILBOT_$SYNCVMLC(2)<ZRAILTOP_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' ZRAILBOT_$SYNCVMLC(2)<ZRAILTOP_$SYNCVMLC(2).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZHOLETOP_$SYNCVMLC(2)<ZRAILBOT_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' ZHOLETOP_$SYNCVMLC(2)<ZRAILBOT_$SYNCVMLC(2).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZHOLEBOT_$SYNCVMLC(2)<ZHOLETOP_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' ZHOLEBOT_$SYNCVMLC(3)<ZHOLETOP_$SYNCVMLC(3).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZTONGUE_$SYNCVMLC(2)<ZHOLEBOT_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' ZTONGUE_$SYNCVMLC(2)<ZHOLEBOT_$SYNCVMLC(2).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZGROOVE_$SYNCVMLC(2)<ZTONGUE_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' ZGROOVE_$SYNCVMLC(2)<ZTONGUE_$SYNCVMLC(2).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZLEAF_$SYNCVMLC(2)<ZTONGUE_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' ZLEAF_$SYNCVMLC(2)<ZTONGUE_$SYNCVMLC(2).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZTIP_$SYNCVMLC(2)<ZLEAF_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' ZTIP_$SYNCVMLC(2)<ZLEAF_$SYNCVMLC(2).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZTIP_$SYNCVMLC(2)>ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC)[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in TARGET leaf definition:'/
      ' ZTIP_$SYNCVMLC(2)>ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]


OUTPUT;
(/' For ISOCENTER leaves input (all in cm, widths projected to ZMIN): '/
' leaf width (excl. tongue), width of tongue, width of groove, width of'/
' tip at top, width of top of support rail, width of bottom of support rail,'/
' Z of top of tip, Z of top of leaf, Z of top of tongue, Z of bottom of'/
' groove, Z of top of driving screw hole, Z of bottom of driving screw hole,'/
' distance of hole from leaf tip, Z of top of support rail, Z of bottom of'/
' support rail:'/);
MINPUT ($SYNCVMLC) LEAFWIDTH_$SYNCVMLC(3), WTONGUE_$SYNCVMLC(3),
     WGROOVE_$SYNCVMLC(3), WTIP_$SYNCVMLC(3),WRAILTOP_$SYNCVMLC(3),
     WRAILBOT_$SYNCVMLC(3), ZTIP_$SYNCVMLC(3), ZLEAF_$SYNCVMLC(3),
     ZTONGUE_$SYNCVMLC(3),ZGROOVE_$SYNCVMLC(3), ZHOLETOP_$SYNCVMLC(3),
     ZHOLEBOT_$SYNCVMLC(3), HOLEPOS_ISO_$SYNCVMLC, ZRAILTOP_$SYNCVMLC(3),
     ZRAILBOT_$SYNCVMLC(3); (15F15.0);
OUTPUT LEAFWIDTH_$SYNCVMLC(3), WTONGUE_$SYNCVMLC(3), WGROOVE_$SYNCVMLC(3),
       WTIP_$SYNCVMLC(3), WRAILTOP_$SYNCVMLC(3), WRAILBOT_$SYNCVMLC(3),
       ZTIP_$SYNCVMLC(3), ZLEAF_$SYNCVMLC(3), ZTONGUE_$SYNCVMLC(3),
      ZGROOVE_$SYNCVMLC(3), ZHOLETOP_$SYNCVMLC(3), ZHOLEBOT_$SYNCVMLC(3),
      HOLEPOS_ISO_$SYNCVMLC, ZRAILTOP_$SYNCVMLC(3), ZRAILBOT_$SYNCVMLC(3);
      (15F15.5);
"now do checks on input dimensions"
IF(WGROOVE_$SYNCVMLC(3)>LEAFWIDTH_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' WGROOVE_$SYNCVMLC(3)>LEAFWIDTH_$SYNCVMLC(3).  Groove too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WTIP_$SYNCVMLC(3)>LEAFWIDTH_$SYNCVMLC(3)-WGROOVE_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' WTIP_$SYNCVMLC(3)>LEAFWIDTH_$SYNCVMLC(3)-WGROOVE_$SYNCVMLC(3).'/
      ' Tip too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILTOP_$SYNCVMLC(3)>LEAFWIDTH_$SYNCVMLC(3)+WTONGUE_$SYNCVMLC(3)-
   WGROOVE_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' WRAILTOP_$SYNCVMLC(3)>LEAFWIDTH_$SYNCVMLC(3)+WTONGUE_$SYNCVMLC(3)-'/
      '                  WGROOVE_$SYNCVMLC(3).  Top of rail too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILTOP_$SYNCVMLC(3)<WTONGUE_$SYNCVMLC(3)+WTIP_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' WRAILTOP_$SYNCVMLC(3)<WTONGUE_$SYNCVMLC(3)+WTIP_$SYNCVMLC(3).'/
      ' Top of rail too narrow.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILBOT_$SYNCVMLC(3)>WRAILTOP_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
' WRAILBOT_$SYNCVMLC(3)>WRAILTOP_$SYNCVMLC(3).  Bottom of rail too wide.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WRAILBOT_$SYNCVMLC(3)<WRAILTOP_$SYNCVMLC(3)-WTONGUE_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' WRAILBOT_$SYNCVMLC(3)<WRAILTOP_$SYNCVMLC(3)-WTONGUE_$SYNCVMLC(3).'/
      ' Bottom of rail too narrow.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZTIP_$SYNCVMLC(3)<ZMIN_$SYNCVMLC)[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' ZTIP_$SYNCVMLC(3)<ZMIN_$SYNCVMLC.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZLEAF_$SYNCVMLC(3)<ZTIP_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' ZLEAF_$SYNCVMLC(3)<ZTIP_$SYNCVMLC(3).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZTONGUE_$SYNCVMLC(3)<ZLEAF_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' ZTONGUE_$SYNCVMLC(3)<ZLEAF_$SYNCVMLC(3).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZGROOVE_$SYNCVMLC(3)<ZTONGUE_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' ZGROOVE_$SYNCVMLC(3)<ZTONGUE_$SYNCVMLC(3).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZHOLETOP_$SYNCVMLC(3)<ZGROOVE_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' ZHOLETOP_$SYNCVMLC(3)<ZGROOVE_$SYNCVMLC(3).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZHOLEBOT_$SYNCVMLC(3)<ZHOLETOP_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' ZHOLEBOT_$SYNCVMLC(3)<ZHOLETOP_$SYNCVMLC(3).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZRAILTOP_$SYNCVMLC(3)<ZHOLEBOT_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' ZRAILTOP_$SYNCVMLC(3)<ZHOLEBOT_$SYNCVMLC(3).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZRAILBOT_$SYNCVMLC(3)<ZRAILTOP_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' ZRAILBOT_$SYNCVMLC(3)<ZRAILTOP_$SYNCVMLC(3).'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZRAILBOT_$SYNCVMLC(3)>ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC)[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in ISOCENTER leaf definition:'/
      ' ZRAILBOT_$SYNCVMLC(3)>ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC.'//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]

"now check dimensions between leaf types"
IF(ZTONGUE_$SYNCVMLC(3)<=ZGROOVE_$SYNCVMLC(2))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in leaf definition:'/
      ' ZTONGUE_$SYNCVMLC(3)<=ZGROOVE_$SYNCVMLC(2).'/
      ' ISOCENTER/TARGET leaves will not fit together.'//);
       IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZTONGUE_$SYNCVMLC(2)>=ZGROOVE_$SYNCVMLC(3))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in leaf definition:'/
      ' ZTONGUE_$SYNCVMLC(2)>=ZGROOVE_$SYNCVMLC(3).'/
      ' ISOCENTER/TARGET leaves will not fit together.'//);
       IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZGROOVE_$SYNCVMLC(3)<=ZTONGUE_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in leaf definition:'/
      ' ZGROOVE_$SYNCVMLC(3)<=ZTONGUE_$SYNCVMLC(1).'/
      ' ISOCENTER leaf will not fit with'/
      ' FULL leaf if ISOCENTER leaf is on -X or -Y side.'//);
       IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(ZTONGUE_$SYNCVMLC(2)>=ZGROOVE_$SYNCVMLC(1))[
   OUTPUT ICM_$SYNCVMLC;
   (//' ***ERROR IN CM ',I3,' ($SYNCVMLC) in leaf definition:'/
      ' ZTONGUE_$SYNCVMLC(2)>=ZGROOVE_$SYNCVMLC(1).'/
      ' TARGET leaf will not fit with'/
      ' FULL leaf if FULL leaf is on -X or -Y side.'//);
       IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]

TOT_LEAF_$SYNCVMLC=0;
K=0;
OUTPUT;(' ');
DO I=1,NGROUP_$SYNCVMLC [
   OUTPUT I;
   (' Group ',I3,':'/
    '   No. of leaves, leaf type (1. FULL leaves--the default, '/
    '   2. TARGET/ISOCENTER pairs with TARGET leaf on -X or -Y side)'/
    '   :',$);
   MINPUT ($SYNCVMLC) NUM_LEAF_$SYNCVMLC(I), LEAFTYPE; (2I5);
   OUTPUT NUM_LEAF_$SYNCVMLC(I), LEAFTYPE; (2I5);

   TOT_LEAF_$SYNCVMLC=TOT_LEAF_$SYNCVMLC+NUM_LEAF_$SYNCVMLC(I);

   IF(LEAFTYPE<=0|LEAFTYPE>2)[
     LEAFTYPE=1;
     OUTPUT ICM_$SYNCVMLC,I;
         (//' ***WARNING IN CM ',I3,' ($SYNCVMLC)'/
            ' Leaf type for group ',I3,' not recognized.'/
            ' Will default to 1.'//);
   ]
   IF(MOD(NUM_LEAF_$SYNCVMLC(I),2)~=0 & (LEAFTYPE=2 |
     LEAFTYPE=3))[
      OUTPUT ICM_$SYNCVMLC,I;
         (//' ***ERROR IN CM ',I3,' ($SYNCVMLC)'/
            ' Leaf group ',I3,' consists of TARGET/ISOCENTER pairs but'/
            ' does not have an even number of leaves.'//);
     IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
   ]
   "now set LEAFTYPE for each leaf"
   DO J=1,NUM_LEAF_$SYNCVMLC(I)[
      K=K+1;
      IF(LEAFTYPE=1)[
         LEAFTYPE_$SYNCVMLC(K)=1;
      ]
      ELSE["target/isocenter pair"
        IF(MOD(J,2)~=0)["target leaf"
           LEAFTYPE_$SYNCVMLC(K)=2;
        ]
        ELSE[
           LEAFTYPE_$SYNCVMLC(K)=3;
        ]
      ]
   ]
]
;
IF(TOT_LEAF_$SYNCVMLC>$MAXLEAF) [
    TOT_LEAF_$SYNCVMLC=$MAXLEAF;
    OUTPUT ICM_$SYNCVMLC,TOT_LEAF_$SYNCVMLC;
            (//' ***ERROR IN CM ',I3,' ($SYNCVMLC)'/
             ' Total # of leaves > max allowed'/
             ' Total # of leaves reduced to ',I3,' for now'//);
    IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
 ]
;
IF(TOT_LEAF_$SYNCVMLC<=0) [
    TOT_LEAF_$SYNCVMLC=1;
    OUTPUT ICM_$SYNCVMLC,TOT_LEAF_$SYNCVMLC;
            (//' ***ERROR IN CM ',I3,' ($SYNCVMLC)'/
             ' Total # of leaves <= 0'/
             ' Total # of leaves set to ',I3,' for now'//);
    IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
 ];

" III. START POSITION OF LEAVES"
" ============================="
;
OUTPUT ZMIN_$SYNCVMLC; (/' Input the starting X (ORIENT_$SYNCVMLC=0) or '/
         ' Y (ORIENT_$SYNCVMLC=1) position at z = ',F15.0, ' cm : ', $);
MINPUT ($SYNCVMLC) START_$SYNCVMLC; (F15.0);
OUTPUT START_$SYNCVMLC; (F12.5);

" Checking the validity of user-input"

IF(ABS(START_$SYNCVMLC)-RMAX_CM(ICM_$SYNCVMLC)>1.E-5) [
  OUTPUT ICM_$SYNCVMLC;
   (//'***ERROR IN CM ',I4,' ($SYNCVMLC)'/
   ' START POSITION EXCEEDS CM BOUNDARY'//);
   IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
 ];

"IV. INTER-LEAF AIR GAP "
"====================== "

OUTPUT; (/'Input the inter-leaf air gap(>=0.0) : ',$);
  "leaf gap defined at ZMIN"
MINPUT ($SYNCVMLC) LEAFGAP_$SYNCVMLC; (F15.0);
OUTPUT LEAFGAP_$SYNCVMLC; (F12.5);

IF (LEAFGAP_$SYNCVMLC<0.0) [
      LEAFGAP_$SYNCVMLC=0;
      OUTPUT ICM_$SYNCVMLC;
         (//'***ERROR IN CM ',I4,' ($SYNCVMLC)'/
         ' Inter-leaf air gap is negative - reset to 0   '//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
      ];

"Check that there are no unblocked areas between adjacent leaves"
IF(LEAFGAP_$SYNCVMLC>WTONGUE_$SYNCVMLC(1))[
        LEAFGAP_$SYNCVMLC = WTONGUE_$SYNCVMLC(1);
        OUTPUT ICM_$SYNCVMLC;
        (//'**ERROR IN CM ',I4,' ($SYNCVMLC)'/
       ' Width of inter-leaf airgap exceeds that of the FULL leaf tongue.',/
       ' Reset to be equal to the width of the tongue. '//);
         IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(LEAFGAP_$SYNCVMLC>WTONGUE_$SYNCVMLC(3))[
        LEAFGAP_$SYNCVMLC = WTONGUE_$SYNCVMLC(3);
        OUTPUT ICM_$SYNCVMLC;
        (//'**ERROR IN CM ',I4,' ($SYNCVMLC)'/
   ' Width of inter-leaf airgap exceeds that of the ISOCENTER leaf tongue.',/
   ' Reset to be equal to the width of the tongue. '//);
        IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(LEAFGAP_$SYNCVMLC>WTONGUE_$SYNCVMLC(2))[
        LEAFGAP_$SYNCVMLC = WTONGUE_$SYNCVMLC(2);
        OUTPUT ICM_$SYNCVMLC;
        (//'**ERROR IN CM ',I4,' ($SYNCVMLC)'/
   ' Width of inter-leaf airgap exceeds that of the TARGET leaf tongue.',/
   ' Reset to be equal to the width of the tongue. '//);
        IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]

"check leaf gap between adjacent tongue and groove"
IF(WGROOVE_$SYNCVMLC(1)+LEAFGAP_$SYNCVMLC-WTONGUE_$SYNCVMLC(1)<0.0)[
    OUTPUT ICM_$SYNCVMLC;
     (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
        ' Tongue in FULL leaf too wide for groove in FULL leaf. '//);
     IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WGROOVE_$SYNCVMLC(2)+LEAFGAP_$SYNCVMLC-WTONGUE_$SYNCVMLC(3)<0.0)[
    OUTPUT ICM_$SYNCVMLC;
     (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
        ' Tongue in ISOCENTER leaf too wide for groove in TARGET leaf. '//);
     IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WGROOVE_$SYNCVMLC(1)+LEAFGAP_$SYNCVMLC-WTONGUE_$SYNCVMLC(2)<0.0)[
    OUTPUT ICM_$SYNCVMLC;
     (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
        ' Tongue in TARGET leaf too wide for groove in FULL leaf. '//);
     IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]
IF(WGROOVE_$SYNCVMLC(3)+LEAFGAP_$SYNCVMLC-WTONGUE_$SYNCVMLC(1)<0.0)[
    OUTPUT ICM_$SYNCVMLC;
     (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
        ' Tongue in FULL leaf too wide for groove in ISOCENTER leaf. '//);
     IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
]

"V. TYPE OF LEAF ENDS - ROUNDED VS FLAT DIVERGENT "
"================================================ "

OUTPUT; (/'Input the type of leaf end desired : ',/,
          '   0 --- Rounded leaf end or ',/
          '   1 --- Focused leaf end  ');
OUTPUT; ('Input your choice : ', $);
MINPUT ($SYNCVMLC) ENDTYPE_$SYNCVMLC; (I5);
OUTPUT ENDTYPE_$SYNCVMLC; (I5/);
;
IF(ENDTYPE_$SYNCVMLC=1) [
   OUTPUT; (' Input the z focus of the leaf ends : ',$);
   MINPUT ($SYNCVMLC) ZFOCUS_$SYNCVMLC(2); (F15.0);
   OUTPUT ZFOCUS_$SYNCVMLC(2);(F12.5/);

   IF(ABS(ZFOCUS_$SYNCVMLC(2)-ZMIN_$SYNCVMLC)<1.E-5) [
      ZFOCUS_$SYNCVMLC(2)=ZMIN_$SYNCVMLC-1.E-4;
      OUTPUT ICM_$SYNCVMLC,ZFOCUS_$SYNCVMLC(2);
          (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
           ' ZFOCUS(2) cannot be equal to ZMIN_$SYNCVMLC'/
           ' ZFOCUS(2) reset to ',F15.5,' cm for now'//);
      IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
     ]
   ELSEIF(ZFOCUS_$SYNCVMLC(2)>ZMIN_$SYNCVMLC &
          ZFOCUS_$SYNCVMLC(2)<ZMAX_$SYNCVMLC)[
        ZFOCUS_$SYNCVMLC(2)=ZMAX_$SYNCVMLC;
        OUTPUT ICM_$SYNCVMLC,ZFOCUS_$SYNCVMLC(2);
          (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
          ' ZFOCUS(2) is between ZMIN_$SYNCVMLC and ZMAX_$SYNCVMLC'/
          ' This will cause leaf ends to overlap'/
          ' ZFOCUS(2) reset to ',F15.5,' cm for now'//);
       IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
     ];
 ]
ELSE  [ "Defaults to rounded ends "

   OUTPUT (ZTHICK_$SYNCVMLC/2);
          (' Input the radius >= ', F12.5, ' cm ', /
          ' of the leaf ends : ',$);

   MINPUT ($SYNCVMLC) LEAFRADIUS_$SYNCVMLC; (F15.0);
   OUTPUT LEAFRADIUS_$SYNCVMLC; (F15.0/);

   IF((LEAFRADIUS_$SYNCVMLC < (0.5*ZTHICK_$SYNCVMLC)) |
      (LEAFRADIUS_$SYNCVMLC < 0.0)) [

" This is done to ensure that the leaf end is rounded all the"
" way from zmin_$syncvmlc to zmax_$syncvmlc. "
" Otherwise the curvature will fall short."

     LEAFRADIUS_$SYNCVMLC=0.5*ZTHICK_$SYNCVMLC;
     OUTPUT ICM_$SYNCVMLC,LEAFRADIUS_$SYNCVMLC;
      (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
      ' LEAFRADIUS_$SYNCVMLC is less than minimum acceptable'/
      ' RESET TO ', F15.5, ' cm for now'//);
     IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
    ]
    IF(HOLEPOS_FULL_$SYNCVMLC>=LEAFRADIUS_$SYNCVMLC) [
      HOLEPOS_FULL_$SYNCVMLC=LEAFRADIUS_$SYNCVMLC-0.1;
      OUTPUT ICM_$SYNCVMLC,LEAFRADIUS_$SYNCVMLC;
      (//'***ERROR IN CM ',I4,' ($SYNCVMLC)'/
      ' Hole position in FULL leaves is greater than leaf'/
      ' radius. Reset to ',F12.5,' cm for now'//);
      IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
    ]
    IF(HOLEPOS_ISO_$SYNCVMLC>=LEAFRADIUS_$SYNCVMLC) [
      HOLEPOS_ISO_$SYNCVMLC=LEAFRADIUS_$SYNCVMLC-0.1;
      OUTPUT ICM_$SYNCVMLC,LEAFRADIUS_$SYNCVMLC;
      (//'***ERROR IN CM ',I4,' ($SYNCVMLC)'/
      ' Hole position in ISOCENTER leaves is greater than leaf'/
      ' radius. Reset to ',F12.5,' cm for now'//);
      IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
    ]
    IF(HOLEPOS_TAR_$SYNCVMLC>=LEAFRADIUS_$SYNCVMLC) [
      HOLEPOS_TAR_$SYNCVMLC=LEAFRADIUS_$SYNCVMLC-0.1;
      OUTPUT ICM_$SYNCVMLC,LEAFRADIUS_$SYNCVMLC;
      (//'***ERROR IN CM ',I4,' ($SYNCVMLC)'/
      ' Hole position in TARGET leaves is greater than leaf'/
      ' radius. Reset to ',F12.5,' cm for now'//);
      IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
    ]
 ]; " End of checking the leaf end ;


"VI. FOCUS FOR DIVERGENT LEAF SIDES "
"==================================== "

OUTPUT; (' Input the Z focus point of the leaf sides: ',$);
MINPUT ($SYNCVMLC) ZFOCUS_$SYNCVMLC(1); (F15.0);
OUTPUT ZFOCUS_$SYNCVMLC(1); (F12.5/);
IF(ABS(ZFOCUS_$SYNCVMLC(1)-ZMIN_$SYNCVMLC)<1.E-5) [
   ZFOCUS_$SYNCVMLC(1)=ZMIN_$SYNCVMLC-1.E-4;
   OUTPUT ICM_$SYNCVMLC,ZFOCUS_$SYNCVMLC(1);
      (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
       ' ZFOCUS(1) cannot be equal to ZMIN_$SYNCVMLC'/
       ' ZFOCUS(1) reset to ',F15.5,' cm for now'//);
   IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
 ]
ELSEIF(ZFOCUS_$SYNCVMLC(1)>ZMIN_$SYNCVMLC &
    ZFOCUS_$SYNCVMLC(1)<ZMAX_$SYNCVMLC) [
   ZFOCUS_$SYNCVMLC(1)=ZMAX_$SYNCVMLC;
   OUTPUT ICM_$SYNCVMLC,ZFOCUS_$SYNCVMLC(1);
      (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
       ' ZFOCUS(1) is between ZMIN_$SYNCVMLC and ZMAX_$SYNCVMLC'/
       ' This will cause leaf sides to overlap'/
       ' ZFOCUS(1) reset to ',F15.5,' cm for now'//);
   IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
 ];

"VII. CALCULATE THE Z-AXIS COORDINATES OF DIFFERENT SUB-REGIONS "
"============================================================= "
"this is done on a leaf-by-leaf basis"
I=0;
DO J=1,NGROUP_$SYNCVMLC[
  DO K=1,NUM_LEAF_$SYNCVMLC(J)[
    I=I+1;
    ZREG_$SYNCVMLC(I,1)=ZMIN_$SYNCVMLC;
    IF(LEAFTYPE_$SYNCVMLC(I)=1)["full leaf"
      ZREG_$SYNCVMLC(I,2)=ZTIP_$SYNCVMLC(1);
      ZREG_$SYNCVMLC(I,3)=ZLEAF_$SYNCVMLC(1);
      ZREG_$SYNCVMLC(I,4)=ZTONGUE_$SYNCVMLC(1);
      ZREG_$SYNCVMLC(I,5)=ZGROOVE_$SYNCVMLC(1);
      ZREG_$SYNCVMLC(I,6)=ZHOLETOP_$SYNCVMLC(1);
      ZREG_$SYNCVMLC(I,7)=ZHOLEBOT_$SYNCVMLC(1);
      ZREG_$SYNCVMLC(I,8)=ZRAILTOP_$SYNCVMLC(1);
      ZREG_$SYNCVMLC(I,9)=ZRAILBOT_$SYNCVMLC(1);
      ZREG_$SYNCVMLC(I,10)=ZREG_$SYNCVMLC(I,1)+ZTHICK_$SYNCVMLC;
      HOLEPOS_$SYNCVMLC(I)=HOLEPOS_FULL_$SYNCVMLC;"do this here"
    ]
    ELSEIF(LEAFTYPE_$SYNCVMLC(I)=2)["target leaf"
      ZREG_$SYNCVMLC(I,2)=ZRAILTOP_$SYNCVMLC(2);
      ZREG_$SYNCVMLC(I,3)=ZRAILBOT_$SYNCVMLC(2);
      ZREG_$SYNCVMLC(I,4)=ZHOLETOP_$SYNCVMLC(2);
      ZREG_$SYNCVMLC(I,5)=ZHOLEBOT_$SYNCVMLC(2);
      ZREG_$SYNCVMLC(I,6)=ZTONGUE_$SYNCVMLC(2);
      ZREG_$SYNCVMLC(I,7)=ZGROOVE_$SYNCVMLC(2);
      ZREG_$SYNCVMLC(I,8)=ZLEAF_$SYNCVMLC(2);
      ZREG_$SYNCVMLC(I,9)=ZTIP_$SYNCVMLC(2);
      ZREG_$SYNCVMLC(I,10)=ZREG_$SYNCVMLC(I,1)+ZTHICK_$SYNCVMLC;
      HOLEPOS_$SYNCVMLC(I)=HOLEPOS_TAR_$SYNCVMLC;
    ]
    ELSE["isocenter"
      ZREG_$SYNCVMLC(I,2)=ZTIP_$SYNCVMLC(3);
      ZREG_$SYNCVMLC(I,3)=ZLEAF_$SYNCVMLC(3);
      ZREG_$SYNCVMLC(I,4)=ZTONGUE_$SYNCVMLC(3);
      ZREG_$SYNCVMLC(I,5)=ZGROOVE_$SYNCVMLC(3);
      ZREG_$SYNCVMLC(I,6)=ZHOLETOP_$SYNCVMLC(3);
      ZREG_$SYNCVMLC(I,7)=ZHOLEBOT_$SYNCVMLC(3);
      ZREG_$SYNCVMLC(I,8)=ZRAILTOP_$SYNCVMLC(3);
      ZREG_$SYNCVMLC(I,9)=ZRAILBOT_$SYNCVMLC(3);
      ZREG_$SYNCVMLC(I,10)=ZREG_$SYNCVMLC(I,1)+ZTHICK_$SYNCVMLC;
      HOLEPOS_$SYNCVMLC(I)=HOLEPOS_ISO_$SYNCVMLC;
    ]
  ]
];

"VIII. CALC PARAMETERS IN DIRECTION PERPENDICULAR TO LEAF ORIENTATION
"==================================================================

TEMP1 = (ZMIN_$SYNCVMLC-ZFOCUS_$SYNCVMLC(1));

I=0;
IF(TOT_LEAF_$SYNCVMLC>0) [
  DO L = 1,NGROUP_$SYNCVMLC[
   DO K = 1,NUM_LEAF_$SYNCVMLC(L) [
     I=I+1;
     IF(I=1)[
       YREG_$SYNCVMLC(I,1)=START_$SYNCVMLC;
     ]
     ELSEIF(LEAFTYPE_$SYNCVMLC(I)=1)[
       YREG_$SYNCVMLC(I,1)=YREG_$SYNCVMLC(I-1,7)+LEAFGAP_$SYNCVMLC-
                          WTONGUE_$SYNCVMLC(1);
     ]
     ELSEIF(LEAFTYPE_$SYNCVMLC(I)=2)["target leaf"
         YREG_$SYNCVMLC(I,1)=YREG_$SYNCVMLC(I-1,7)+LEAFGAP_$SYNCVMLC-
                          WTONGUE_$SYNCVMLC(2);
     ]
     ELSE["isocenter leaf"
         YREG_$SYNCVMLC(I,1)=YREG_$SYNCVMLC(I-1,7)+LEAFGAP_$SYNCVMLC-
                          WTONGUE_$SYNCVMLC(3);
     ]
     "we have now defined YREG_$SYNCVMLC(I,1)"
     IF(LEAFTYPE_$SYNCVMLC(I)=1)["full leaf"
       YREG_$SYNCVMLC(I,2)=YREG_$SYNCVMLC(I,1)+WTONGUE_$SYNCVMLC(1);
       YREG_$SYNCVMLC(I,3)=YREG_$SYNCVMLC(I,1)+WTIP_$SYNCVMLC(1);
       YREG_$SYNCVMLC(I,4)=YREG_$SYNCVMLC(I,2)+WRAILTOP_$SYNCVMLC(1)-
                          WRAILBOT_$SYNCVMLC(1);
       YREG_$SYNCVMLC(I,5)=YREG_$SYNCVMLC(I,2)+WRAILTOP_$SYNCVMLC(1);
       YREG_$SYNCVMLC(I,6)=YREG_$SYNCVMLC(I,2)+LEAFWIDTH_$SYNCVMLC(1)-
                          WGROOVE_$SYNCVMLC(1);
       YREG_$SYNCVMLC(I,7)=YREG_$SYNCVMLC(I,2)+LEAFWIDTH_$SYNCVMLC(1);
     ]
     ELSEIF(LEAFTYPE_$SYNCVMLC(I)=2)["target leaf"
       YREG_$SYNCVMLC(I,2)=YREG_$SYNCVMLC(I,1)+WTONGUE_$SYNCVMLC(2);
       YREG_$SYNCVMLC(I,3)=YREG_$SYNCVMLC(I,2)+LEAFWIDTH_$SYNCVMLC(2)-
                          WRAILBOT_$SYNCVMLC(2);
       YREG_$SYNCVMLC(I,4)=YREG_$SYNCVMLC(I,2)+LEAFWIDTH_$SYNCVMLC(2)-
                           WGROOVE_$SYNCVMLC(2)-WTIP_$SYNCVMLC(2);
       YREG_$SYNCVMLC(I,5)=YREG_$SYNCVMLC(I,2)+LEAFWIDTH_$SYNCVMLC(2)-
                          WGROOVE_$SYNCVMLC(2);
       YREG_$SYNCVMLC(I,6)=YREG_$SYNCVMLC(I,2)+LEAFWIDTH_$SYNCVMLC(2)-
                          WRAILBOT_$SYNCVMLC(2)+WRAILTOP_$SYNCVMLC(2);
       YREG_$SYNCVMLC(I,7)=YREG_$SYNCVMLC(I,2)+LEAFWIDTH_$SYNCVMLC(2);
     ]
     ELSE["isocenter leaf"
       YREG_$SYNCVMLC(I,2)=YREG_$SYNCVMLC(I,1)+WRAILTOP_$SYNCVMLC(3)-
                          WRAILBOT_$SYNCVMLC(3);
       YREG_$SYNCVMLC(I,3)=YREG_$SYNCVMLC(I,1)+WTONGUE_$SYNCVMLC(3);
       YREG_$SYNCVMLC(I,4)=YREG_$SYNCVMLC(I,3)+WTIP_$SYNCVMLC(3);
       YREG_$SYNCVMLC(I,5)=YREG_$SYNCVMLC(I,1)+WRAILTOP_$SYNCVMLC(3);
       YREG_$SYNCVMLC(I,6)=YREG_$SYNCVMLC(I,3)+LEAFWIDTH_$SYNCVMLC(3)-
                          WGROOVE_$SYNCVMLC(3);
       YREG_$SYNCVMLC(I,7)=YREG_$SYNCVMLC(I,3)+LEAFWIDTH_$SYNCVMLC(3);
     ]
     DO J = 1, 7 [
    SURPARA1_$SYNCVMLC(I,J)=YREG_$SYNCVMLC(I,J)/TEMP1;
            ];                "End of J Loop"
  ]; "End of K Loop"
 ]; "End of L loop"
];   "End of IF statement"

" Check to see if the SYNCVMLC will go outside the CM boundary "

TEMP1 = ABS((ZMAX_$SYNCVMLC-ZFOCUS_$SYNCVMLC(1))*SURPARA1_$SYNCVMLC(1,2));
TEMP2 = ABS((ZMAX_$SYNCVMLC-ZFOCUS_$SYNCVMLC(1))*
            SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,6));

IF(TEMP1>RMAX_CM(ICM_$SYNCVMLC)|TEMP2>RMAX_CM(ICM_$SYNCVMLC)) [
   OUTPUT; (/' The SYNCVMLC is not contained within the CM boundaries', /
        ' Please check ZFOCUS_$SYNCVMLC(1) and RMAX_CM(ICM_$SYNCVMLC)'/);
   STOP;
  ];


"IX. INPUT THE COORDINATES NEG_$SYNCVMLC AND POS_$SYNCVMLC "
"===================================================== "
mlc_unit=70;
DO I=1, TOT_LEAF_$SYNCVMLC
[
    LEAFB_$SYNCVMLC(I)=0.0;LEAFA_$SYNCVMLC(I)=0.0;
]
IF(MODE_$SYNCVMLC=1|MODE_$SYNCVMLC=2)["dynamic or step-and-shoot leaf inputs"
  OUTPUT;(/' Input full name of file containing leaf opening data:'/);
  READ(i_input,'(A256)')mlc_file;
  OUTPUT mlc_file;(A/);
  call replace_env(mlc_file);
  mlc_unit=egs_get_unit(mlc_unit);
  IF(mlc_unit<1)[
    $egs_fatal(*,
         'MLC leaf opening file: failed to get a free Fortran I/O unit');
  ]
  open(mlc_unit,file=mlc_file,status='old',err=:no-mlc-data-file:);
  read(mlc_unit,'(A80)') MLC_TITLE;
  read(mlc_unit,'(I10)') NFIELDS_$SYNCVMLC;
  OUTPUT NFIELDS_$SYNCVMLC; (I10);

  IF(NFIELDS_$SYNCVMLC>$MAXFIELD_$SYNCVMLC) [
   OUTPUT $MAXFIELD_$SYNCVMLC;
        (/' The number of fields is greater than $MAXFIELD_$SYNCVMLC: ',I10, /
        ' Increase $MAXFIELD_$SYNCVMLC in SYNCVMLC_macros.mortran'/);
   STOP;
  ];

  DO I=1,NFIELDS_$SYNCVMLC[
  "read in non-default leaf positions for each field"
     read(mlc_unit,'(F15.0)')INDEX_$SYNCVMLC(I);
     J=1;"counter for total no. of leaves input so far"
     LOOP[
       read(mlc_unit,'(2F15.0,I5)')NEG_$SYNCVMLC, POS_$SYNCVMLC, NUM_$SYNCVMLC;
       IF(NUM_$SYNCVMLC<=0) NUM_$SYNCVMLC=1;
       DO K=J,J+NUM_$SYNCVMLC-1[
         IF(K>TOT_LEAF_$SYNCVMLC) EXIT;
         LEAFNEG_$SYNCVMLC(K+(I-1)*TOT_LEAF_$SYNCVMLC)=NEG_$SYNCVMLC;
         LEAFPOS_$SYNCVMLC(K+(I-1)*TOT_LEAF_$SYNCVMLC)=POS_$SYNCVMLC;
       ]
       J=K;
     ]WHILE(J<=TOT_LEAF_$SYNCVMLC);
  ]
  CLOSE(UNIT=mlc_unit);

  OUTPUT;('******MLC SEQUENCE FILE READ******');
  IF (MODE_$SYNCVMLC=1) [
      OUTPUT; ('**dynamic delivery**');
  ]
  ELSEIF (MODE_$SYNCVMLC=2) [
      OUTPUT; ('**step and shoot delivery**');
  ]
]
ELSE[
OUTPUT; (' Input for MLC A and B leaf tips '/);
IF(ORIENT_$SYNCVMLC=1)[
    IF(ENDTYPE_$SYNCVMLC=1)[
      OUTPUT;(' Input min. X, max. X of top of opening in leaves,');
    ]
    ELSE[
      OUTPUT;(' Input min. X, max. X of rounded leaf ends,');
    ]
]
ELSE[
    IF(ENDTYPE_$SYNCVMLC=1)[
      OUTPUT;(' Input min. Y, max. Y of top of opening in leaves,');
    ]
    ELSE[
      OUTPUT;(' Input min. Y, max. Y of rounded leaf ends,');
    ]
]
OUTPUT;(' # of adjacent leaves with these coordinates:');
I=1;
LOOP[
  OUTPUT I;('   For leaf',I4,' :',$)
  MINPUT ($SYNCVMLC) NEG_$SYNCVMLC, POS_$SYNCVMLC, NUM_$SYNCVMLC; (2F15.0,I5);
  IF(NUM_$SYNCVMLC<=0) NUM_$SYNCVMLC=1;
  OUTPUT NEG_$SYNCVMLC, POS_$SYNCVMLC, NUM_$SYNCVMLC; (2F12.5,I5);
  IF(NEG_$SYNCVMLC > POS_$SYNCVMLC)[
     NEG_$SYNCVMLC = POS_$SYNCVMLC;
     OUTPUT ICM_$SYNCVMLC,I,I+NUM_$SYNCVMLC-1,NEG_$SYNCVMLC;
      (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
   ' Min. and max. opening coordinates in leaves ',I4,' - ',I4,' overlap'/
   ' Both coordinates set to ',F15.5,' cm for now'//);
     IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
                               ]

  IF(ABS(NEG_$SYNCVMLC)>RMAX_CM(ICM_$SYNCVMLC)|
     ABS(POS_$SYNCVMLC)>RMAX_CM(ICM_$SYNCVMLC)) [

     OUTPUT ICM_$SYNCVMLC,I,I+NUM_$SYNCVMLC-1;
      (//' ***ERROR IN CM ',I4,' ($SYNCVMLC)'/
      ' Tip of leaves ',I4,' - ',I4,' are outside CM '//);

     IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
                                            ];
  DO J=I,I+NUM_$SYNCVMLC-1["define opening for all leaves in group"
    IF(J>TOT_LEAF_$SYNCVMLC) EXIT;
    LEAFB_$SYNCVMLC(J)=NEG_$SYNCVMLC;
    LEAFA_$SYNCVMLC(J)=POS_$SYNCVMLC;
  ]
  I=J;
]WHILE(I<=TOT_LEAF_$SYNCVMLC);"End of Coordinate inputs for || direction "

IF(ENDTYPE_$SYNCVMLC=1)[
DO I=1, TOT_LEAF_$SYNCVMLC [

SURPARA2_B_$SYNCVMLC(I)=
    LEAFB_$SYNCVMLC(I)/(ZMIN_$SYNCVMLC-ZFOCUS_$SYNCVMLC(2) );

SURPARA2_A_$SYNCVMLC(I)=
    LEAFA_$SYNCVMLC(I)/(ZMIN_$SYNCVMLC-ZFOCUS_$SYNCVMLC(2) );

                         ];
                    ];
]


"X. ESTABLISH TOP OF FIRST CM
"==============================

ZFRONT_$SYNCVMLC = Z_min_CM(ICM_$SYNCVMLC);

"
"XI. ESTABLISH START OF NEXT CM
"================================

Z_min_CM(ICM_$SYNCVMLC+1) = ZMAX_$SYNCVMLC;

"
"XII. GET ECUT, PCUT, DOSE SCORING ZONE AND MATERIAL IN EACH REGION
"==================================================================

IRA = IRSTART_$SYNCVMLC-1;
DO IR_$SYNCVMLC = 1,N_$SYNCVMLC ["loop through regions to get information"
   IRA = IRA+1;
   IF(IR_$SYNCVMLC=1) [
       OUTPUT IR_$SYNCVMLC;
        (/' Region',I4,' (MLC opening):'/
          ' ECUT, PCUT (MeV), DOSE ZONE (0=NO DOSE SCORED), IREGION_TO_BIT'/
          ' :',$);
   ]
   ELSEIF(IR_$SYNCVMLC=2) [
       OUTPUT IR_$SYNCVMLC;
        (/' Region',I4,' (MLC leaves):'/
' ECUT, PCUT (MeV), DOSE ZONE (0=NO DOSE SCORED), IREGION_TO_BIT, IGNOREGAPS'/
         ' :',$);
   ]
   ELSE[
       OUTPUT IR_$SYNCVMLC;
        (/' Region',I4,' (driving screw holes):'/
         ' ECUT, PCUT (MeV), DOSE ZONE (0=NO DOSE SCORED), IREGION_TO_BIT'/
         ' :',$);
   ]
   IF(IR_$SYNCVMLC~=2)[
      MINPUT ($SYNCVMLC) ECUT(IRA),PCUT(IRA),DOSE_ZONE(IRA),IREGION_TO_BIT(IRA);
      (2F15.0,2I5);
      OUTPUT ECUT(IRA),PCUT(IRA),DOSE_ZONE(IRA),IREGION_TO_BIT(IRA);
             (2F15.5,2I5);
   ]
   ELSE[
      MINPUT ($SYNCVMLC) ECUT(IRA),PCUT(IRA),DOSE_ZONE(IRA),
                        IREGION_TO_BIT(IRA),IGNOREGAPS_$SYNCVMLC; (2F15.0,3I5);
      OUTPUT ECUT(IRA),PCUT(IRA),DOSE_ZONE(IRA),IREGION_TO_BIT(IRA),
             IGNOREGAPS_$SYNCVMLC; (2F15.5,3I5);
   ]
   IF(ECUT(IRA) < ECUTIN) [ECUT(IRA)=ECUTIN;];
   IF(PCUT(IRA) < PCUTIN) [PCUT(IRA)=PCUTIN;];
   OUTPUT IR_$SYNCVMLC; (' material of region ',I3,' ',$);
     $MED_INPUT($SYNCVMLC); " inputs character array MED_IN from unit 5, loops"
  "through array MEDIA(24,I) to check if medium was previously input."
  "If so, sets MED_INDEX to index of previous medium.  If not,"
  "increments NMED and sets MED_INDEX to NMED."
   MED(IRA) = MED_INDEX; " medium of the planar slab"
 ] "end of loop over IR_$SYNCVMLC"
;

IF(IGNOREGAPS_$SYNCVMLC=1 & IREJCT_GLOBAL>0)[
   IF(ORIENT_$SYNCVMLC=1)["leaves parallel to X"
       OUTPUT;(/' *******Range rejection in $SYNCVMLC will ignore all'/
               ' air gaps if the particle is in the leaves and has'/
               ' X < min. X of leaf openings (not including leaf ends)'/
               ' or X > max. X of leaf openings (not including ends)'/);
   ]
   ELSE["leaves parallel to Y"
       OUTPUT;(/' *******Range rejection in $SYNCVMLC will ignore all'/
               ' air gaps if the particle is in the leaves and has'/
               ' Y < min. Y of leaf openings (not including leaf ends)'/
               ' or Y > max. Y of leaf openings (not including ends)'/);
   ]
   IF(MODE_$SYNCVMLC=0)[
   DO I=1,TOT_LEAF_$SYNCVMLC["loop through leaves to find index of those with"
                           "max. +ve opening and min. -ve opening"
       IF(I=1)[
           MIN_INDEX=I;
           MAX_INDEX=I;
       ]
       ELSE[
           IF(LEAFB_$SYNCVMLC(I)<LEAFB_$SYNCVMLC(I-1))MIN_INDEX=I;
           IF(LEAFA_$SYNCVMLC(I)>LEAFA_$SYNCVMLC(I-1))MAX_INDEX=I;
       ]
   ]
   IF(ENDTYPE_$SYNCVMLC=1)["straight, focused ends"
       MIN_PLANE_$SYNCVMLC=MIN(LEAFB_$SYNCVMLC(MIN_INDEX),
                        SURPARA2_B_$SYNCVMLC(MIN_INDEX)*
                       (ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC-ZFOCUS_$SYNCVMLC(2)));
       MAX_PLANE_$SYNCVMLC=MAX(LEAFB_$SYNCVMLC(MAX_INDEX),
                         SURPARA2_B_$SYNCVMLC(MAX_INDEX)*
                         (ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC-ZFOCUS_$SYNCVMLC(2)));
   ]
   ELSE["rounded leaf ends"
       MIN_PLANE_$SYNCVMLC=LEAFB_$SYNCVMLC(MIN_INDEX)-LEAFRADIUS_$SYNCVMLC+
                         SQRT(LEAFRADIUS_$SYNCVMLC**2-(ZTHICK_$SYNCVMLC/2.)**2);
       MAX_PLANE_$SYNCVMLC=LEAFA_$SYNCVMLC(MAX_INDEX)+LEAFRADIUS_$SYNCVMLC-
                         SQRT(LEAFRADIUS_$SYNCVMLC**2-(ZTHICK_$SYNCVMLC/2.)**2);
   ]
   ]
]
ELSE["set to default"
   IGNOREGAPS_$SYNCVMLC=0;
]
"
"XIII. SET UP AIR GAP TO PREVIOUS CM IF PRESENT
"  =========================================
"
"  The air gap has the highest region number in the CM, even though its
"  the top of the component module.  This is to allow the assignment of
"  region numbers on input of the parameters of each local region
"  (mainly to assign the medium number of the region).
"  The air gap is then assigned after all of the
"  CM parameters have been input.
"
"note that if this is the first CM (ICM_$mlc=1) then the gap thickness
"Z_gap_THICK(ICM_$syncvmlc) = 0, which is used as a flag for no air gap

Z_gap_THICK(ICM_$SYNCVMLC) = ZMIN_$SYNCVMLC - Z_min_CM(ICM_$SYNCVMLC);
IF (Z_gap_THICK(ICM_$SYNCVMLC) < = 0.0) [
   Z_gap_THICK(ICM_$SYNCVMLC) = 0.;
   N_GAP_$SYNCVMLC = 0; "no air gap for this CM"
  ]
ELSE [
   N_GAP_$SYNCVMLC = 1; "this CM has an air gap"
   IRA = IRSTART_$SYNCVMLC+N_$SYNCVMLC; "absolute region number of air gap"
   MED(IRA) = AIR_INDEX; "medium is air"
 ];
"
"XIV. SET UP REGION NUMBERS
"===========================
"
"  This CM has N_$SYNCVMLC+N_GAP_$mlc regions
"
;
"Index last region
IREND_$SYNCVMLC = (IRSTART_$SYNCVMLC -1) + N_$SYNCVMLC+N_GAP_$SYNCVMLC;
NREG = NREG+N_$SYNCVMLC+N_GAP_$SYNCVMLC;
                            "Total no of regions in full geometry up
                            "to and including this CM
IF (NREG <= $MXREG) [
   IR_start_CM(ICM_$SYNCVMLC+1) = IREND_$SYNCVMLC+1;
  ]    "have not exceeded maximum region number
       "Index of first region in next CM:"
ELSE [
   OUTPUT ICM_$SYNCVMLC,NREG,$MXREG;
   (//' ***ERROR IN CM ',I4,' ($SYNCVMLC):'/
   T2,I4,' regions requested, only ',I4,' available'//);
   IERR_GEOM(ICM_$SYNCVMLC)=IERR_GEOM(ICM_$SYNCVMLC)+1;
 ];

"
"XV.  ESTABLISH CM BOUNDARY
"============================
"
RMAX_CM_FLAG(ICM_$SYNCVMLC) = 2; "put a square boundary about CM
"
"XVI. ESTABLISH DOSE SCORING ZONES AND BIT SETTING FOR EACH REGION
"===================================================================
"
IRA = IRSTART_$SYNCVMLC-1; "absolute region number"
DO IR_$SYNCVMLC=1,N_$SYNCVMLC ["loop over local region number"
   IRA = IRA+1;
   "dose-scoring zones"
   NDOSE_ZONE = MAX(DOSE_ZONE(IRA),NDOSE_ZONE); "Number of dose zones"
   MAX_BIT = MAX(IREGION_TO_BIT(IRA),MAX_BIT); " current maximum"
   "charged particle range rejection parameters"
   ESAVE(IRA)=ESAVE_GLOBAL; "Particles with total energies below ESAVE are"
                            "considered for range rejection"
   ECUTRR(IRA)=ECUT(IRA); "Minimum energy on exit from region GXD"
   E_min_out(ICM_$SYNCVMLC)=ECUT(IRA); "Minimum energy on exit from CM"
  ] "end of loop over IR_$SYNCVMLC

"XVII. ESTABLISH SUB-REGION IR VALUES
"===================================
DO L=1,TOT_LEAF_$SYNCVMLC [
      DO I=1,5 [ "NX"
           DO J =1,6 [ "NY"
                DO K = 1,9 [ "NZ"
                  SUBINDEX_$SYNCVMLC(L,I,J,K)=1; "set all regions to air"
                  ];
            ];
         ];
      ];
;
"Now define regions containing leaf medium"
DO L=1,TOT_LEAF_$SYNCVMLC[
  DO I =2,5 [
   DO J = 3,4 [
      DO K = 3,7 [
        SUBINDEX_$SYNCVMLC(L,I,J,K)=2; "set central section to leaf med"
       ];
     ];
   IF(LEAFTYPE_$SYNCVMLC(L)=2) ["This is a target leaf"
      SUBINDEX_$SYNCVMLC(L,I,1,1)=2;
      SUBINDEX_$SYNCVMLC(L,I,1,2)=2;
      SUBINDEX_$SYNCVMLC(L,I,1,3)=2;
      SUBINDEX_$SYNCVMLC(L,I,1,4)=2;
      SUBINDEX_$SYNCVMLC(L,I,1,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,1)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,2)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,3)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,4)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,6)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,7)=2;
      SUBINDEX_$SYNCVMLC(L,I,3,1)=2;
      SUBINDEX_$SYNCVMLC(L,I,4,1)=2;
      SUBINDEX_$SYNCVMLC(L,I,4,8)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,1)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,3)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,4)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,6)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,3)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,4)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,6)=2;
    ]
   ELSEIF(LEAFTYPE_$SYNCVMLC(L)=1) ["full leaf"
      SUBINDEX_$SYNCVMLC(L,I,1,2)=2;
      SUBINDEX_$SYNCVMLC(L,I,1,3)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,2)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,3)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,4)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,6)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,7)=2;
      SUBINDEX_$SYNCVMLC(L,I,4,9)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,3)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,4)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,6)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,7)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,8)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,9)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,6)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,7)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,8)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,9)=2;
    ]
   ELSE[ "This is an isocenter leaf"
      SUBINDEX_$SYNCVMLC(L,I,1,4)=2;
      SUBINDEX_$SYNCVMLC(L,I,1,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,1,6)=2;
      SUBINDEX_$SYNCVMLC(L,I,1,7)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,4)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,6)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,7)=2;
      SUBINDEX_$SYNCVMLC(L,I,2,9)=2;
      SUBINDEX_$SYNCVMLC(L,I,3,2)=2;
      SUBINDEX_$SYNCVMLC(L,I,3,9)=2;
      SUBINDEX_$SYNCVMLC(L,I,4,9)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,3)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,4)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,6)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,7)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,8)=2;
      SUBINDEX_$SYNCVMLC(L,I,5,9)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,5)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,6)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,7)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,8)=2;
      SUBINDEX_$SYNCVMLC(L,I,6,9)=2;
    ];
  ];
"Now set driving screw hole to air"
   DO J=1,6 [
    IF(LEAFTYPE_$SYNCVMLC(L)=2) ["target leaf"
      SUBINDEX_$SYNCVMLC(L,2,J,4)=3;
      SUBINDEX_$SYNCVMLC(L,5,J,4)=3;
     ]
    ELSE ["full or isocenter leaf"
      SUBINDEX_$SYNCVMLC(L,2,J,6)=3;
      SUBINDEX_$SYNCVMLC(L,5,J,6)=3;
     ]
   ];
   IF(LEAFTYPE_$SYNCVMLC(L)=1) ["full leaf"
     SUBINDEX_$SYNCVMLC(L,2,1,6)=1;
     SUBINDEX_$SYNCVMLC(L,5,1,6)=1;
   ];
 ];
  "   =======================
"
RETURN;

"XVIII. ERROR MESSAGES
"==================
"
:EOF_$SYNCVMLC:
;OUTPUT ICM;
  (//' *** ERROR *** unexpected end of file reading input for CM',I3);
STOP;

:ERROR_$SYNCVMLC:
;OUTPUT ICM;(//' *** ERROR *** format error on input for CM',I3);
STOP;

:no-mlc-data-file:
;OUTPUT;(//' *** ERROR: MLC leaf data file could not be opened');
STOP;

END;  "End of INPUT_$SYNCVMLC"

%E "Start of subroutine ISUMRY_$SYNCVMLC"
"***********************************************************************
"
"                          Subroutine ISUMRY_$SYNCVMLC
"                          ***********************
"
" Summarize input, write graphics file for EGS_Windows, and set parameters
" that require medium information obtained from HATCH call.
"
"***********************************************************************

;SUBROUTINE ISUMRY_$SYNCVMLC;

;IMPLICIT NONE;
;COMIN/ BOUNDS,CMs,CM_$SYNCVMLC,GEOM,IO_INFO,MEDIA,MISC,SCORE,UPHIOT,USER/;
"T>
"T>**********************************
"T>TYPE DECLARATIONS FOR ISUMRY_$SYNCVMLC
"T>**********************************
"T>
INTEGER
   ICOLOUR, "T>colour of CM for EGS_Windows
"   ID,     already defined gf  T>index of dose scoring zone
   IRA,     "T>absolute region number
   I,J,     "T>DO loop index
   ISTART,IEND, "T>indices for outputting info"
   YY1(9),          "T> YY1 and YY2 index subregion along perpendicular..
   YY2(9),          "T> direction to MLC orientation
   YY3(9),          "T> specific for target leaf
   YY4(9),          "T>
   YY5(9),          "T> same for full leaf
   YY6(9),          "T>
   YY7(9),          "T> same for isocenter leaf
   YY8(9);         "T>

$REAL  VOL_$SYNCVMLC(3), "T> region volumes
       Zo,             "T> THe z-coordinate of the leaf center
       XoP,XoN,        "T> The center of the rounded leaves ends along leaf
       M1,M2,          "T> Variables related to partial(rounded) leaf volume
       THETASUB,       "T> Angle at leaf end subtended by Z boundaries of reg.
       TOTALVOL,       "T> Total volume of MLC CM
       ZSQUARE,ZCUBE,AREA,    "T> Variables related to partial leaf volumes
       TEMP,TEMP1,TEMP2,TEMP3,"T> Variables related to partial leaf volumes
       HOLD;            "T> to hold a TEMP value

"   Mass of dose zone
"   =================
"
"Need to calculate mass of dose zone here, after call to HATCH, where the
"region density is set if it was allowed to default in INPUT_$mlc.
"This volume calculation is approximate, but close enough
"

TOTALVOL = (ZMAX_$SYNCVMLC-ZMIN_$SYNCVMLC)*4*RMAX_CM(ICM_$SYNCVMLC)**2;
VOL_$SYNCVMLC(1) = 0.;
VOL_$SYNCVMLC(2) = 0.;
VOL_$SYNCVMLC(3) = 0.;

Zo = ZMIN_$SYNCVMLC + (ZTHICK_$SYNCVMLC/2);

DATA ( YY3(I), I=1,9) /1,1,1,1,1,2,2,4,7/; "target leaf"
DATA ( YY4(I), I=1,9) /6,3,7,7,7,7,5,5,7/;
DATA ( YY5(I), I=1,9) /1,1,1,2,2,2,2,5,4/; "full leaf"
DATA ( YY6(I), I=1,9) /1,3,6,6,7,7,7,7,7/;
DATA ( YY7(I), I=1,9) /1,3,3,1,1,1,1,5,2/; "isocenter leaf"
DATA ( YY8(I), I=1,9) /1,4,6,6,7,7,7,7,7/;

DO J = 1, TOT_LEAF_$SYNCVMLC [
  IF(LEAFTYPE_$SYNCVMLC(J)=2) [
    DO I=1,9[
      YY1(I)=YY3(I);
      YY2(I)=YY4(I);
    ]
   ]
  ELSEIF(LEAFTYPE_$SYNCVMLC(J)=1) [
    DO I=1,9[
      YY1(I)=YY5(I);
      YY2(I)=YY6(I);
    ]
   ]
  ELSE [
    DO I=1,9[
      YY1(I)=YY7(I);
      YY2(I)=YY8(I);
    ]
   ]
  DO I = 2,10 [ "9 subregions in z-direction"
      ZSQUARE=(ZREG_$SYNCVMLC(J,I)**2)-(ZREG_$SYNCVMLC(J,I-1)**2) -
              2*ZREG_$SYNCVMLC(J,I)*ZFOCUS_$SYNCVMLC(1) +
              2*ZREG_$SYNCVMLC(J,I-1)*ZFOCUS_$SYNCVMLC(1);
      AREA=SURPARA1_$SYNCVMLC(J,YY2(I-1))/2*ZSQUARE -
               SURPARA1_$SYNCVMLC(J,YY1(I-1))/2*ZSQUARE;
      IF(ENDTYPE_$SYNCVMLC=0) [ "Rounded leaf end"
        XoN=LEAFB_$SYNCVMLC(J)-LEAFRADIUS_$SYNCVMLC;
        XoP=LEAFA_$SYNCVMLC(J)+LEAFRADIUS_$SYNCVMLC;
        TEMP1=SQRT(LEAFRADIUS_$SYNCVMLC**2-(ZREG_$SYNCVMLC(J,I-1)-Zo)**2);
        TEMP2=SQRT(LEAFRADIUS_$SYNCVMLC**2-(ZREG_$SYNCVMLC(J,I)-Zo)**2);
        M1=ASIN(TEMP1/LEAFRADIUS_$SYNCVMLC);
        M2=ASIN(TEMP2/LEAFRADIUS_$SYNCVMLC);
        THETASUB=ABS(M1-M2);
        TEMP=AREA*(2*RMAX_CM(ICM_$SYNCVMLC)-(XoP-MIN(TEMP1,TEMP2)-
                      XoN-MIN(TEMP1,TEMP2)));
        TEMP=TEMP+((ZREG_$SYNCVMLC(J,I)-ZREG_$SYNCVMLC(J,I-1))*ABS(TEMP1-TEMP2)
             +LEAFRADIUS_$SYNCVMLC**2*(THETASUB-SIN(THETASUB)))*
             ((SURPARA1_$SYNCVMLC(J,YY2(I-1))-SURPARA1_$SYNCVMLC(J,YY1(I-1)))*
             (ZREG_$SYNCVMLC(J,I)-ZFOCUS_$SYNCVMLC(1)) +
             (SURPARA1_$SYNCVMLC(J,YY2(I-1))-SURPARA1_$SYNCVMLC(J,YY1(I-1)))*
             (ZREG_$SYNCVMLC(J,I-1)-ZFOCUS_$SYNCVMLC(1)))/2;
        VOL_$SYNCVMLC(2)=VOL_$SYNCVMLC(2)+TEMP;
       ]
      ELSE[ "Focused divergent leaf end "
        TEMP1=SURPARA2_A_$SYNCVMLC(J)*
              (ZREG_$SYNCVMLC(J,I-1)-ZFOCUS_$SYNCVMLC(2));
        TEMP2=SURPARA2_A_$SYNCVMLC(J)*(ZREG_$SYNCVMLC(J,I)-ZFOCUS_$SYNCVMLC(2));
        "do positive part of leaf first"
        TEMP=AREA*(RMAX_CM(ICM_$SYNCVMLC)-MAX(TEMP1,TEMP2));
        TEMP=TEMP+(ABS(TEMP1-TEMP2)*(ZREG_$SYNCVMLC(J,I)-
             ZREG_$SYNCVMLC(J,I-1)))/2*((SURPARA1_$SYNCVMLC(J,YY2(I-1))-
             SURPARA1_$SYNCVMLC(J,YY1(I-1)))*(ZREG_$SYNCVMLC(J,I)-
             ZFOCUS_$SYNCVMLC(1))+(SURPARA1_$SYNCVMLC(J,YY2(I-1))-
             SURPARA1_$SYNCVMLC(J,YY1(I-1)))*(ZREG_$SYNCVMLC(J,I-1)-
             ZFOCUS_$SYNCVMLC(1)))/2;
        "now do negative part of leaf"
        TEMP1=SURPARA2_B_$SYNCVMLC(J)*
              (ZREG_$SYNCVMLC(J,I-1)-ZFOCUS_$SYNCVMLC(2));
        TEMP2=SURPARA2_B_$SYNCVMLC(J)*(ZREG_$SYNCVMLC(J,I)-ZFOCUS_$SYNCVMLC(2));
        TEMP=TEMP+AREA*(MIN(TEMP1,TEMP2)+RMAX_CM(ICM_$SYNCVMLC));
        TEMP=TEMP+(ABS(TEMP1-TEMP2)*(ZREG_$SYNCVMLC(J,I)-
             ZREG_$SYNCVMLC(J,I-1)))/2*((SURPARA1_$SYNCVMLC(J,YY2(I-1))-
             SURPARA1_$SYNCVMLC(J,YY1(I-1)))*(ZREG_$SYNCVMLC(J,I)-
             ZFOCUS_$SYNCVMLC(1))+(SURPARA1_$SYNCVMLC(J,YY2(I-1))-
             SURPARA1_$SYNCVMLC(J,YY1(I-1)))*(ZREG_$SYNCVMLC(J,I-1)-
             ZFOCUS_$SYNCVMLC(1)))/2;
        VOL_$SYNCVMLC(2)=VOL_$SYNCVMLC(2)+TEMP;
       ];

     "IF(I=5 & J=1) HOLD=TEMP;  <-- not using this for now"
    ];  "End of I loop"
    "now subtract volume of driving screw hole"
   IF(LEAFTYPE_$SYNCVMLC(J)=2) ["target leaf"
     ZSQUARE=(ZREG_$SYNCVMLC(J,5)**2)-(ZREG_$SYNCVMLC(J,4)**2) -
              2*ZREG_$SYNCVMLC(J,5)*ZFOCUS_$SYNCVMLC(1) +
              2*ZREG_$SYNCVMLC(J,4)*ZFOCUS_$SYNCVMLC(1);
     AREA=SURPARA1_$SYNCVMLC(J,7)/2*ZSQUARE -
               SURPARA1_$SYNCVMLC(J,1)/2*ZSQUARE;
     "positive portion of leaf"
     TEMP=AREA*(RMAX_CM(ICM_$SYNCVMLC)-LEAFA_$SYNCVMLC(J)-HOLEPOS_$SYNCVMLC(J));
     VOL_$SYNCVMLC(2)=VOL_$SYNCVMLC(2)-TEMP;
     VOL_$SYNCVMLC(3)=VOL_$SYNCVMLC(3)+TEMP;
     "negative portion of leaf"
     TEMP=AREA*(LEAFB_$SYNCVMLC(J)-HOLEPOS_$SYNCVMLC(J)+RMAX_CM(ICM_$SYNCVMLC));
     VOL_$SYNCVMLC(2)=VOL_$SYNCVMLC(2)-TEMP;
     VOL_$SYNCVMLC(3)=VOL_$SYNCVMLC(3)+TEMP;
    ]
  IF(LEAFTYPE_$SYNCVMLC(J)=1) ["full leaf"
     ZSQUARE=(ZREG_$SYNCVMLC(J,7)**2)-(ZREG_$SYNCVMLC(J,6)**2) -
              2*ZREG_$SYNCVMLC(J,7)*ZFOCUS_$SYNCVMLC(1) +
              2*ZREG_$SYNCVMLC(J,6)*ZFOCUS_$SYNCVMLC(1);
     AREA=SURPARA1_$SYNCVMLC(J,7)/2*ZSQUARE -
               SURPARA1_$SYNCVMLC(J,2)/2*ZSQUARE;
     "positive portion of leaf"
     TEMP=AREA*(RMAX_CM(ICM_$SYNCVMLC)-LEAFA_$SYNCVMLC(J)-HOLEPOS_$SYNCVMLC(J));
     VOL_$SYNCVMLC(2)=VOL_$SYNCVMLC(2)-TEMP;
     VOL_$SYNCVMLC(3)=VOL_$SYNCVMLC(3)+TEMP;
     "negative portion of leaf"
     TEMP=AREA*(LEAFB_$SYNCVMLC(J)-HOLEPOS_$SYNCVMLC(J)+RMAX_CM(ICM_$SYNCVMLC));
     VOL_$SYNCVMLC(2)=VOL_$SYNCVMLC(2)-TEMP;
     VOL_$SYNCVMLC(3)=VOL_$SYNCVMLC(3)+TEMP;
    ]
  ELSE ["isocenter leaf"
     ZSQUARE=(ZREG_$SYNCVMLC(J,7)**2)-(ZREG_$SYNCVMLC(J,6)**2) -
              2*ZREG_$SYNCVMLC(J,7)*ZFOCUS_$SYNCVMLC(1) +
              2*ZREG_$SYNCVMLC(J,6)*ZFOCUS_$SYNCVMLC(1);
     AREA=SURPARA1_$SYNCVMLC(J,7)/2*ZSQUARE -
               SURPARA1_$SYNCVMLC(J,1)/2*ZSQUARE;
     "positive portion of leaf"
     TEMP=AREA*(RMAX_CM(ICM_$SYNCVMLC)-LEAFA_$SYNCVMLC(J)-HOLEPOS_$SYNCVMLC(J));
     VOL_$SYNCVMLC(2)=VOL_$SYNCVMLC(2)-TEMP;
     VOL_$SYNCVMLC(3)=VOL_$SYNCVMLC(3)+TEMP;
     "negative portion of leaf"
     TEMP=AREA*(LEAFB_$SYNCVMLC(J)-HOLEPOS_$SYNCVMLC(J)+RMAX_CM(ICM_$SYNCVMLC));
     VOL_$SYNCVMLC(2)=VOL_$SYNCVMLC(2)-TEMP;
     VOL_$SYNCVMLC(3)=VOL_$SYNCVMLC(3)+TEMP;
    ]

 ];       "End of J Loop"

VOL_$SYNCVMLC(1) = TOTALVOL - VOL_$SYNCVMLC(2) - VOL_$SYNCVMLC(3);

"i.e. Air Volume = Total Volume - Volume of Leaves

IRA = IRSTART_$SYNCVMLC-1; "absolute region number
DO IR_$SYNCVMLC=1,N_$SYNCVMLC [ "loop over local region number"
   IRA = IRA+1;
   IF(DOSE_ZONE(IRA).NE.0) ["this is a dose zone"
      ID=DOSE_ZONE(IRA);
      AMASS(ID)=AMASS(ID)+VOL_$SYNCVMLC(IR_$SYNCVMLC)*RHOR(IRA);
    ];
 ]; "end of loop over IR_$SYNCVMLC"

"   Summarize geometrical information for this CM in listing file
"   ==============================================================
"
WRITE(IOUTLIST,110) ICM_$SYNCVMLC,TITLE_$SYNCVMLC;
WRITE(IOUTLIST,120) Z_min_CM(ICM_$SYNCVMLC), RMAX_CM(ICM_$SYNCVMLC);
IF(N_GAP_$SYNCVMLC~=0) [
   WRITE(IOUTLIST,124) Z_min_CM(ICM_$SYNCVMLC),
                       ZMIN_$SYNCVMLC-Z_min_CM(ICM_$SYNCVMLC);
  ];
WRITE(IOUTLIST,122) ZTHICK_$SYNCVMLC;
IF(ORIENT_$SYNCVMLC~=0) [
   WRITE(IOUTLIST,123) 'X';
]
ELSE[
   WRITE(IOUTLIST,123) 'Y';
]
IF(ENDTYPE_$SYNCVMLC=1) [
   WRITE(IOUTLIST,125) ZFOCUS_$SYNCVMLC(2);
]
ELSE[
   WRITE(IOUTLIST,126) LEAFRADIUS_$SYNCVMLC;
]
WRITE(IOUTLIST,127) ZFOCUS_$SYNCVMLC(1),LEAFGAP_$SYNCVMLC,
                     VOL_$SYNCVMLC(1),VOL_$SYNCVMLC(2),
                     VOL_$SYNCVMLC(3),TOTALVOL;
WRITE(IOUTLIST,128) (LEAFWIDTH_$SYNCVMLC(I),I=1,3),
                    (WTONGUE_$SYNCVMLC(I),I=1,3),
                    (WGROOVE_$SYNCVMLC(I),I=1,3),
                    (WTIP_$SYNCVMLC(I),I=1,3),
                    (WRAILTOP_$SYNCVMLC(I),I=1,3),
                    (WRAILBOT_$SYNCVMLC(I),I=1,3),
                    (ZTIP_$SYNCVMLC(I),I=1,3),
                    (ZLEAF_$SYNCVMLC(I),I=1,3),
                    (ZTONGUE_$SYNCVMLC(I),I=1,3),
                    (ZGROOVE_$SYNCVMLC(I),I=1,3),
                    (ZHOLETOP_$SYNCVMLC(I),I=1,3),
                    (ZHOLEBOT_$SYNCVMLC(I),I=1,3),
                     HOLEPOS_FULL_$SYNCVMLC,HOLEPOS_TAR_$SYNCVMLC,
                     HOLEPOS_ISO_$SYNCVMLC,
                    (ZRAILTOP_$SYNCVMLC(I),I=1,3),
                    (ZRAILBOT_$SYNCVMLC(I),I=1,3);
IF(ORIENT_$SYNCVMLC~=0) [
      WRITE(IOUTLIST,129)'Y','X';
 ]
ELSE [
      WRITE(IOUTLIST,129)'X','Y';
]
ISTART=1;
IEND=2;
LOOP[
  IF(IEND>TOT_LEAF_$SYNCVMLC |
     LEAFB_$SYNCVMLC(IEND)~=LEAFB_$SYNCVMLC(ISTART)|
     LEAFA_$SYNCVMLC(IEND)~=LEAFA_$SYNCVMLC(ISTART)|
     (LEAFTYPE_$SYNCVMLC(ISTART)=1 &
        LEAFTYPE_$SYNCVMLC(IEND)~=LEAFTYPE_$SYNCVMLC(ISTART))|
     (LEAFTYPE_$SYNCVMLC(ISTART)>1 & LEAFTYPE_$SYNCVMLC(IEND)=1))[
     IF(LEAFTYPE_$SYNCVMLC(ISTART)=1)[
        WRITE(IOUTLIST,130)ISTART,IEND-1,'1',
                       YREG_$SYNCVMLC(ISTART,1),YREG_$SYNCVMLC(IEND-1,7),
                       LEAFB_$SYNCVMLC(ISTART),LEAFA_$SYNCVMLC(ISTART);
     ]
     ELSE[
        WRITE(IOUTLIST,130)ISTART,IEND-1,'2/3',
                       YREG_$SYNCVMLC(ISTART,1),YREG_$SYNCVMLC(IEND-1,7),
                       LEAFB_$SYNCVMLC(ISTART),LEAFA_$SYNCVMLC(ISTART);
     ]
     ISTART=IEND;
  ]
  ELSE[
     IEND=IEND+1;
  ]
]WHILE(ISTART<=TOT_LEAF_$SYNCVMLC);
WRITE(IOUTLIST,131);
IRA=IRSTART_$SYNCVMLC-1;
DO IR_$SYNCVMLC=1,N_$SYNCVMLC [
   IRA = IRA+1;
   IF(IR_$SYNCVMLC=1) [
      IF (MED(IRA)=0) ["Medium is vacuum"
         WRITE(IOUTLIST,140) IR_$SYNCVMLC,'opening',ECUT(IRA),PCUT(IRA),
           ECUTRR(IRA),ESAVE(IRA),DOSE_ZONE(IRA),
           IREGION_TO_BIT(IRA),'V','a','c','u','u','m';
       ]
      ELSE ["Medium is not vacuum"
         WRITE(IOUTLIST,140) IR_$SYNCVMLC,'opening',ECUT(IRA),PCUT(IRA),
         ECUTRR(IRA),ESAVE(IRA),DOSE_ZONE(IRA),
         IREGION_TO_BIT(IRA),(MEDIA(J,MED(IRA)),J=1,9);
      ];
   ]
   ELSEIF(IR_$SYNCVMLC=2 | IR_$SYNCVMLC=3) [
      IF (MED(IRA)=0) ["Medium is vacuum"
         WRITE(IOUTLIST,140) IR_$SYNCVMLC,'leaves',ECUT(IRA),PCUT(IRA),
           ECUTRR(IRA),ESAVE(IRA),DOSE_ZONE(IRA),
           IREGION_TO_BIT(IRA),'V','a','c','u','u','m';
       ]
      ELSE ["Medium is not vacuum"
         WRITE(IOUTLIST,140) IR_$SYNCVMLC,'leaves',ECUT(IRA),PCUT(IRA),
         ECUTRR(IRA),ESAVE(IRA),DOSE_ZONE(IRA),
         IREGION_TO_BIT(IRA),(MEDIA(J,MED(IRA)),J=1,9)
       ]
   ];
];

IF(N_GAP_$SYNCVMLC~=0) [
   IRA=IRSTART_$SYNCVMLC+N_$SYNCVMLC;
   WRITE(IOUTLIST,140) IR_$SYNCVMLC,'airgap',ECUT(IRA),PCUT(IRA),
         ECUTRR(IRA),ESAVE(IRA),DOSE_ZONE(IRA),IREGION_TO_BIT(IRA),
         (MEDIA(J,MED(IRA)),J=1,9);
   WRITE(IOUTLIST,141)'at top'
 ];

IF(IGNOREGAPS_$SYNCVMLC=1 & IREJCT_GLOBAL>0)[
  IF(ORIENT_$SYNCVMLC=1)["leaves parallel to X"
   WRITE(IOUTLIST,'(/'' *******Range rejection in $SYNCVMLC will ignore all''/
                   '' air gaps if the particle is in the leaves and has''/
                   '' X < min. X of leaf openings (not including leaf ends)''/
                   '' or X > max. X of leaf openings (not including ends)''/)');
  ]
  ELSE["leaves parallel to Y"
   WRITE(IOUTLIST,'(/'' *******Range rejection in $SYNCVMLC will ignore all''/
                   '' air gaps if the particle is in the leaves and has''/
                   '' Y < min. Y of leaf openings (not including leaf ends)''/
                   '' or Y > max. Y of leaf openings (not including ends)''/)');
  ]
]

110 FORMAT(/'  Component module',I3,' is a multi-leaf collimator',
           /' (3 regions)',
           /'  -------------------------------------------------',
           /'------------------',
           //T5,'Title: ',68A1);
120 FORMAT(/T2,'$SYNCVMLC geometry parameters:',
           /T2,'------------------------',
           /T2,'Distance from front of CM from reference plane = ',T51,
           F15.5,' cm',
           /T2,'Radius of outer boundary of CM = ',T51,F15.5,' cm');
122 FORMAT(T2,'Thickness of collimator = ',T51,F15.5,' cm');
123 FORMAT(T2,'Leaves open parallel to the ',A1,' axis');
124 FORMAT(T2,'There is an airgap starting at Z = ',F8.3,' cm with',
              ' thickness ',F8.3,' cm');
125 FORMAT(T2,'Straight leaf ends with Z focus = ',T51,F15.5,' cm');
126 FORMAT(T2,'Cylindrical leaf ends with radius = ',T51,F15.5,' cm');
127 FORMAT(T2,'Z focus of leaf sides = ',T51,F15.5,' cm'/
T2,'Gap between adjacent leaves = ',T51,F15.5,' cm'/
T2,'Volume of region between leaves = ',T51,F15.5, 'cm**3'/
T2,'Volume of leaves = ',T51,F15.5, 'cm**3'/
T2,'Volume of driving screw holes = ',T51,F15.5, 'cm**3'/
T2,'Volume of Multileaf Collimator Component Module = ',T51,F15.5, 'cm**3');
128 FORMAT(/T2,'Dimensions for leaf types (all in cm):'/
T2,
'                                        FULL(1)     TARGET(2)   ISOCENTER(3)'/
T2,'                                         ----         ------     ---------'/
T2,'        Leaf width (excl. tongue):',3F13.5/
T2,'                  Width of tongue:',3F13.5/
T2,'                  Width of groove:',3F13.5/
T2,'                     Width of tip:',3F13.5/
T2,'      Width of upper support rail:',3F13.5/
T2,'      Width of lower support rail:',3F13.5/
T2,'           Z of top/bottom of tip:',3F13.5/
T2,'          Z of top/bottom of leaf:',3F13.5/
T2,'        Z of top/bottom of tongue:',3F13.5/
T2,'        Z of top/bottom of groove:',3F13.5/
T2,'   Z of top of driving screw hole:',3F13.5/
T2,'Z of bottom of driving screw hole:',3F13.5/
T2,'   Distance of hole from leaf tip:',3F13.5/
T2,'         Z of top of support rail:',3F13.5/
T2,'      Z of bottom of support rail:',3F13.5);
129 FORMAT(/
T2,' Leaves     type            ',A1,' range             ',A1,
' coordinates of opening'/
T2,'                           spanned (cm)              NEG   (cm)   POS');
130 FORMAT(T2,I3,'-',I3,5X,A3,4X,F10.5,' - ',F10.5,5X,F10.5,5X,F10.5);
131 FORMAT(/T2,'$SYNCVMLC region parameters:',
           /T2,'---------------------------',
           /T2,'local  location  electron  photon',
               '  range-rejection   dose  bit  medium'
           /T2,'region            cutoff   cutoff',
               '   level     max    zone  set'
           /T2,'                   (MeV)    (MeV)',
               '   (MeV)    (MeV)');
140 FORMAT(T2,I3,4X,A7,F10.3,F9.3,F8.3,F9.3,I6,I5,3X,9A1);
141 FORMAT(T9,A7);

"   Output representation of this component module to file for EGS_Windows
"   ======================================================================

IF (IWATCH=4|IZLAST=2) [   "Graphics file requested"
   ;
    ]
; "End of graphics output"

200 FORMAT(' ',I1,A3,A1,10(F7.2,','));
RETURN;
END;

%E "Start of subroutine HOWNEAR_$SYNCVMLC"
"***********************************************************************"
"                                                                       "
"                          Subroutine HOWNEAR_$SYNCVMLC               "
"                          ******************************               "
"                                                                       "
" Calculates min. distance to nearest region boundary                   "
" Used to be HOWNEAR macro, but is now called from that macro.          "
"                                                                       "
"***********************************************************************"

;SUBROUTINE HOWNEAR_$SYNCVMLC(DIST_sngl);
;
$IMPLICIT-NONE;

COMIN/CMs,CM_$SYNCVMLC,STACK,USER,EGS-IO/;

$REAL   DIST_sngl; "T> min. distance to nearest region boundary"
DOUBLE PRECISION   XYL1,XYL2, "T> X(NP) and Y(NP)"
                   XoN, XoP, DIST,
                   UVL1,UVL2,
                   TEMP1,TEMP2,TEMP3,TEMP4,
                   TEMP5,TEMP6,HOLE, "T> temp. distance variables"
                   XL,XR,Lo,Ro,Zo;          "T>temp distance variables"
$INTEGER I,J, "T> looping index"
         NZ, "T> index of subregion in Z direction"
         NY, "T> index of subregion perpendicular to leaf opening direction"
         NX, "T> index of subregion in direction of leaf opening"
         LEAFIS, "T> leaf no. where particle is located"
         I1,I2; "T> used to mark min. max. Z boundaries for calculating dist"


IR_$SYNCVMLC=IR(NP)-IRSTART_$SYNCVMLC+1;
IF(IR_$SYNCVMLC=4) [ "in the air gap at the top"
  DIST=MIN(Z(NP)-ZFRONT_$SYNCVMLC,ZMIN_$SYNCVMLC-Z(NP));
  ]

ELSE [
  IF(ORIENT_$SYNCVMLC=1) [ XYL1=Y(NP);XYL2=X(NP);UVL1=V(NP);UVL2=U(NP); ]
  ELSE [ XYL1=X(NP);XYL2=Y(NP);UVL1=U(NP);UVL2=V(NP);];

  IF(IGNOREGAPS_$SYNCVMLC=1 & XYL2 < MIN_PLANE_$SYNCVMLC &
  XYL1 > SURPARA1_$SYNCVMLC(1,1)*(Z(NP)-ZFOCUS_$SYNCVMLC(1)) &
  XYL1 < SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,7)*(Z(NP)-ZFOCUS_$SYNCVMLC(1)) &
  IR_$SYNCVMLC=2)[
   "particle within negative leaves, ignore air gaps for range rejection"

   "distance to most -ve leaf side...note this is to the tip of the tongue"
   TEMP1=SURPARA1_$SYNCVMLC(1,1);
   TEMP1=ABS((TEMP1*(Z(NP)-ZFOCUS_$SYNCVMLC(1))-XYL1)/SQRT(1+TEMP1**2));

   "distance to most +ve leaf side...note this is to the back of the last"
   "leaf...ie not to the groove"
   TEMP2=SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,7);
   TEMP2=ABS((TEMP2*(Z(NP)-ZFOCUS_$SYNCVMLC(1))-XYL1)/SQRT(1+TEMP2**2));

   DIST=MIN(Z(NP)-ZMIN_$SYNCVMLC,ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC-Z(NP),
           MIN_PLANE_$SYNCVMLC-XYL2,TEMP1,TEMP2);
  ]
  ELSEIF(IGNOREGAPS_$SYNCVMLC=1 & XYL2 > MAX_PLANE_$SYNCVMLC &
  XYL1 > SURPARA1_$SYNCVMLC(1,1)*(Z(NP)-ZFOCUS_$SYNCVMLC(1)) &
  XYL1 < SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,7)*(Z(NP)-ZFOCUS_$SYNCVMLC(1)) &
  IR_$SYNCVMLC=2)[
   "particle within positive leaves, ignore air gaps for range rejection"

   "distance to most -ve leaf side...note this is to the tip of the tongue"
   TEMP1=SURPARA1_$SYNCVMLC(1,1);
   TEMP1=ABS((TEMP1*(Z(NP)-ZFOCUS_$SYNCVMLC(1))-XYL1)/SQRT(1+TEMP1**2));

   "distance to most +ve leaf side...note this is to the back of the last"
   "leaf...ie not just to the groove"
   TEMP2=SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,7);
   TEMP2=ABS((TEMP2*(Z(NP)-ZFOCUS_$SYNCVMLC(1))-XYL1)/SQRT(1+TEMP2**2));

   DIST=MIN(Z(NP)-ZMIN_$SYNCVMLC,ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC-Z(NP),
           XYL2-MAX_PLANE_$SYNCVMLC,TEMP1,TEMP2);
  ]
  ELSE["do not ignore air gaps for range rejection"

LEAFIS=0; "Determine which leaf we are in, I is index of leaf number"
DO I = 1,TOT_LEAF_$SYNCVMLC [
    TEMP1=SURPARA1_$SYNCVMLC(I,1)*(Z(NP)-ZFOCUS_$SYNCVMLC(1));
    TEMP2=SURPARA1_$SYNCVMLC(I,7)*(Z(NP)-ZFOCUS_$SYNCVMLC(1));
    IF(XYL1>=TEMP1 & TEMP2>=XYL1) [
       LEAFIS=I; EXIT;];
 ];

IF(LEAFIS~=0) [
  TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1)*(Z(NP)-ZFOCUS_$SYNCVMLC(1));
  TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7)*(Z(NP)-ZFOCUS_$SYNCVMLC(1));
  IF(XYL1<TEMP1)[
    NY=1;
  ]
  ELSEIF(XYL1>TEMP2)[
    NY=6;
  ]
  ELSE[

    DO J =1,6 [ "Determine which Y region we are in"
      TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,J)*(Z(NP)-ZFOCUS_$SYNCVMLC(1));
      TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,J+1)*(Z(NP)-ZFOCUS_$SYNCVMLC(1));
      IF(TEMP1<=XYL1 & XYL1<=TEMP2) [NY=J; EXIT;]
      ];
  ]
  IF(Z(NP)<ZREG_$SYNCVMLC(LEAFIS,1))[
    NZ=1;
  ]
  ELSEIF(Z(NP)>ZREG_$SYNCVMLC(LEAFIS,10))[
    NZ=9;
  ]
  ELSE[
    DO J = 1,9 [ "Determine which Z region we are in for leaf I"
   IF((ZREG_$SYNCVMLC(LEAFIS,J)<=Z(NP))&(Z(NP)<=ZREG_$SYNCVMLC(LEAFIS,J+1)))[
       NZ=J; EXIT;];
    ];
  ]

  "Check if we are in groove on leaf and move to adjacent leaf"
  IF(LEAFTYPE_$SYNCVMLC(LEAFIS)=2) [ "target leaf"
    IF((NY=5|NY=6) & (NZ=7|NZ=8|NZ=9) & LEAFIS~=TOT_LEAF_$SYNCVMLC) [
       IF(XYL1>SURPARA1_$SYNCVMLC(LEAFIS+1,1)*(Z(NP)-ZFOCUS_$SYNCVMLC(1)))[
          LEAFIS=LEAFIS+1;
          TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1)*(Z(NP)-ZFOCUS_$SYNCVMLC(1));
          TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7)*(Z(NP)-ZFOCUS_$SYNCVMLC(1));
          IF(XYL1<TEMP1)[
            NY=1;
          ]
          ELSEIF(XYL1>TEMP2)[
            NY=6;
          ]
          ELSE[
            DO J=1,6 [ "recheck Y region"
             TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,J)*(Z(NP)-ZFOCUS_$SYNCVMLC(1));
             TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,J+1)*(Z(NP)-ZFOCUS_$SYNCVMLC(1));
             IF(TEMP1<=XYL1 & XYL1<=TEMP2) [NY=J; EXIT;]
            ];
          ]
          IF(Z(NP)<ZREG_$SYNCVMLC(LEAFIS,1))[
            NZ=1;
          ]
          ELSEIF(Z(NP)>ZREG_$SYNCVMLC(LEAFIS,10))[
            NZ=9;
          ]
          ELSE[
            DO J= 1,9 [ "recheck Z region"
              IF((ZREG_$SYNCVMLC(LEAFIS,J)<=Z(NP))
               & (Z(NP)<=ZREG_$SYNCVMLC(LEAFIS,J+1)) ) [NZ=J; EXIT;];
            ];
          ]
         ];
       ];
      ]
    ELSE [ "we are on a full leaf or isocenter leaf"
       IF(NY=6 & NZ<=4 & LEAFIS~=TOT_LEAF_$SYNCVMLC) [
          IF(XYL1>SURPARA1_$SYNCVMLC(LEAFIS+1,1)*(Z(NP)-ZFOCUS_$SYNCVMLC(1)))[
             LEAFIS=LEAFIS+1; NY=1;
             IF(Z(NP)<ZREG_$SYNCVMLC(LEAFIS,1))[
                NZ=1;
             ]
             ELSEIF(Z(NP)>ZREG_$SYNCVMLC(LEAFIS,10))[
                NZ=9;
             ]
             ELSE[
               DO J=1,9 [ "recheck Z region"
                  IF((ZREG_$SYNCVMLC(LEAFIS,J)<=Z(NP))
                   & (Z(NP)<=ZREG_$SYNCVMLC(LEAFIS,J+1))) [NZ=J; EXIT;];
               ];
             ]
             "***check that we have not moved into air gap on next leaf**"
             IF(LEAFTYPE_$SYNCVMLC(LEAFIS)=2) [
                "target leaf"
                IF(NZ>=6) [LEAFIS=LEAFIS-1; NY=6; "****************"
                  IF(Z(NP)<ZREG_$SYNCVMLC(LEAFIS,1))[
                    NZ=1;
                  ]
                  ELSEIF(Z(NP)>ZREG_$SYNCVMLC(LEAFIS,10))[
                    NZ=9;
                  ]
                  ELSE[
                       DO J=1,9 [ "recheck Z"
                         IF((ZREG_$SYNCVMLC(LEAFIS,J)<=Z(NP))
                         & (Z(NP)<=ZREG_$SYNCVMLC(LEAFIS,J+1))) [NZ=J; EXIT;];
                       ];
                  ]
                ];
             ]
             ELSE ["full leaf"
                 IF(NZ>=4) [LEAFIS=LEAFIS-1; NY=6; "****************"
                  IF(Z(NP)<ZREG_$SYNCVMLC(LEAFIS,1))[
                    NZ=1;
                  ]
                  ELSEIF(Z(NP)>ZREG_$SYNCVMLC(LEAFIS,10))[
                    NZ=9;
                  ]
                  ELSE[
                   DO J=1,9 [ "recheck Z"
                    IF((ZREG_$SYNCVMLC(LEAFIS,J)<=Z(NP))
                    & (Z(NP)<=ZREG_$SYNCVMLC(LEAFIS,J+1))) [NZ=J; EXIT;];
                   ];
                  ]
                 ];
                ]
           ];
         ];
      ];

  "Determine which X region we are in"
  IF(ENDTYPE_$SYNCVMLC=1) [ "Focused leaf end"
    TEMP1=SURPARA2_B_$SYNCVMLC(LEAFIS)*(Z(NP)-ZFOCUS_$SYNCVMLC(2));
    TEMP2=SURPARA2_A_$SYNCVMLC(LEAFIS)*(Z(NP)-ZFOCUS_$SYNCVMLC(2));
    HOLE=HOLEPOS_$SYNCVMLC(LEAFIS);
    TEMP3=LEAFB_$SYNCVMLC(LEAFIS)-HOLE;
    TEMP4=LEAFA_$SYNCVMLC(LEAFIS)+HOLE;
    IF((XYL2>TEMP1 & XYL2<TEMP2) | (XYL2=TEMP1 & UVL2>=0.0) |
       (XYL2=TEMP2 & UVL2<0.0)) [NX=1;]
    ELSEIF((XYL2<TEMP1 & XYL2>TEMP3) | (XYL2=TEMP1 & UVL2>=0.0) |
           (XYL2=TEMP3 & UVL2>=0.0)) [NX=3;]
    ELSEIF((XYL2<TEMP3) | (XYL2=TEMP3 & UVL2<0.0)) [NX=2;]
    ELSEIF((XYL2>TEMP2 & XYL2<TEMP4) | (XYL2=TEMP2 & UVL2>=0.0) |
           (XYL2=TEMP4 & UVL2<0.0)) [NX=4;]
    ELSEIF((XYL2>TEMP4) | (XYL2=TEMP4 & UVL2>=0.0)) [NX=5;]
  ]
  ELSE ["Rounded leaf end"
    XoN=LEAFB_$SYNCVMLC(LEAFIS)-LEAFRADIUS_$SYNCVMLC;
    XoP=LEAFA_$SYNCVMLC(LEAFIS)+LEAFRADIUS_$SYNCVMLC;
    Zo=ZMIN_$SYNCVMLC + (ZTHICK_$SYNCVMLC)/2;
    TEMP1=SQRT((XYL2-XoN)**2+(Zo-Z(NP))**2)-LEAFRADIUS_$SYNCVMLC;
    TEMP2=SQRT((XYL2-XoP)**2+(Zo-Z(NP))**2)-LEAFRADIUS_$SYNCVMLC;
    HOLE=HOLEPOS_$SYNCVMLC(LEAFIS);
    TEMP3=LEAFB_$SYNCVMLC(LEAFIS)-HOLE;
    TEMP4=LEAFA_$SYNCVMLC(LEAFIS)+HOLE;
    IF(XYL2>=XoN & XYL2<=XoP & ((TEMP1>0.0 & TEMP2>0.0) |
       (TEMP1=0.0 & UVL2*(XYL2-XoN)+W(NP)*(Z(NP)-Zo)>0.0) |
       (TEMP2=0.0 & UVL2*(XYL2-XoP)+W(NP)*(Z(NP)-Zo)>0.0))) [NX=1;]
    ELSEIF((TEMP1<0.0 & XYL2>TEMP3) | (XYL2=TEMP3 & UVL2>0.0) |
           (TEMP1=0.0 & UVL2*(XYL2-XoN)+W(NP)*(Z(NP)-Zo)<=0.0)) [NX=3;]
    ELSEIF((XYL2<TEMP3) | (XYL2=TEMP3 & UVL2<=0.0)) [NX=2;]
    ELSEIF((TEMP2<0.0 & XYL2<TEMP4) | (XYL2=TEMP4 & UVL2<0.0) |
           (TEMP2=0.0 & UVL2*(XYL2-XoP)+W(NP)*(Z(NP)-Zo)<=0.0)) [NX=4;]
    ELSEIF((XYL2>TEMP4) | (XYL2=TEMP4 & UVL2>=0.0)) [NX=5;]
  ];
   "Set minimum and maximum Z boundaries"
    IF(LEAFTYPE_$SYNCVMLC(LEAFIS)=2) ["Target leaf"
      IF((NY=1|NY=2) & NZ<=3) [I1=1; I2=4;]
      ELSEIF(NY=1 & NZ=5) [I1=5; I2=6;]
      ELSEIF(NY=1 & NZ>=6) [I1=6; I2=10;]
      ELSEIF(NZ=4) [I1=4; I2=5;]
      ELSEIF((NY=2|NY=3) & NZ>=8) [I1=8; I2=10;]
      ELSEIF((NY=3|NY=4|NY=5) & NZ=1) [I1=1; I2=2;]
      ELSEIF((NY=3|NY=4|NY=5) & NZ=2) [I1=2; I2=3;]
      ELSEIF(NY>=3 & NZ=3) [I1=3; I2=4;]
      ELSEIF((NY=2|NY=3) & (NZ=5|NZ=6|NZ=7)) [I1=5; I2=8;]
      ELSEIF(NY=4 & (NZ=5|NZ=6|NZ=7|NZ=8)) [I1=5; I2=9;]
      ELSEIF(NY=4 & NZ=9) [I1=9; I2=10;]
      ELSEIF((NY=5|NY=6) & (NZ=5|NZ=6)) [I1=5; I2=7;]
      ELSEIF((NY=5|NY=6) & NZ>=7) [I1=7; I2=10;]
      ELSEIF(NY=6 & NZ<=2) [I1=1; I2=3;]
     ]
    ELSEIF(LEAFTYPE_$SYNCVMLC(LEAFIS)=1) ["Full leaf"
      IF((NY=1|NY=2) & NZ=1) [I1=1; I2=2;]
      ELSEIF(NY=1 & (NZ=2|NZ=3)) [I1=2; I2=4;]
      ELSEIF(NY=1 & NZ>=4) [I1=4; I2=10;]
      ELSEIF(NY=2 & (NZ=2|NZ=3|NZ=4|NZ=5)) [I1=2; I2=6;]
      ELSEIF(NY>=2 & NZ=6) [I1=6; I2=7;]
      ELSEIF((NY=2|NY=3|NY=4) & NZ=7) [I1=7; I2=8;]
      ELSEIF(NY=2 & NZ>=8) [I1=8; I2=10;]
      ELSEIF((NY=3|NY=4|NY=5) & (NZ=1|NZ=2)) [I1=1; I2=3;]
      ELSEIF((NY=3|NY=4|NY=5) & (NZ=3|NZ=4|NZ=5)) [I1=3; I2=6;]
      ELSEIF(NY=3 & NZ>=8) [I1=8; I2=10;]
      ELSEIF(NY=4 & NZ=8) [I1=8; I2=9;]
      ELSEIF(NY=4 & NZ=9) [I1=9; I2=10;]
      ELSEIF((NY=5|NY=6) & NZ>=7) [I1=7; I2=10;]
      ELSEIF(NY=6 & NZ<=4) [I1=1; I2=5;]
      ELSEIF(NY=6 & NZ=5) [I1=5; I2=6;]
     ]
    ELSE ["Isocenter leaf"
      IF((NY=1|NY=2) & NZ<=3) [I1=1; I2=4;]
      ELSEIF((NY=1|NY=2) & (NZ=4|NZ=5)) [I1=4; I2=6;]
      ELSEIF(NZ=6) [I1=6; I2=7;]
      ELSEIF(NY<=4 & NZ=7) [I1=7; I2=8;]
      ELSEIF(NY=1 & NZ>=8) [I1=8; I2=10;]
      ELSEIF((NY=2|NY=3|NY=4) & NZ=8) [I1=8; I2=9;]
      ELSEIF((NY=2|NY=3|NY=4) & NZ=9) [I1=9; I2=10;]
      ELSEIF(NY=3 & NZ=1) [I1=1; I2=2;]
      ELSEIF(NY=3 & (NZ=2|NZ=3|NZ=4|NZ=5)) [I1=2; I2=6;]
      ELSEIF((NY=4|NY=5) & NZ<=2) [I1=1; I2=3;]
      ELSEIF((NY=4|NY=5) & (NZ=3|NZ=4|NZ=5)) [I1=3; I2=6;]
      ELSEIF((NY=5|NY=6) & NZ>=7) [I1=7; I2=10;]
      ELSEIF(NY=6 & NZ<=4) [I1=1; I2=5;]
      ELSEIF(NY=6 & NZ=5) [I1=5; I2=6;]
     ];

    DIST=MIN(ABS(ZREG_$SYNCVMLC(LEAFIS,I1)-Z(NP)),
             ABS(ZREG_$SYNCVMLC(LEAFIS,I2)-Z(NP)));

    "Calculates distance to closest boundary in z direction"
    "Calculate distance to nearest boundary perp to leaf openings --->"
    IF(LEAFTYPE_$SYNCVMLC(LEAFIS)=2) ["Target leaf"
      IF(NZ=1 & NY<=5) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,6);
       ]
     ELSEIF(NZ=1 & NY=6) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,6);
        IF(LEAFIS=TOT_LEAF_$SYNCVMLC) [
          TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);]
        ELSE [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS+1,3);]
       ]
     ELSEIF(NZ=2 & NY<=2) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,3);
       ]
     ELSEIF(NZ=2 & NY>=3) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,3);
        IF(LEAFIS=TOT_LEAF_$SYNCVMLC) [
          TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);]
        ELSE [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS+1,3);]
       ]
     ELSEIF(NZ=3|NZ=4|NZ=5) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);
       ]
     ELSEIF(NY=1 & (NZ=6|NZ=7)) [
        IF(LEAFIS=1) [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
        ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,7);]
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,2);
       ]
     ELSEIF(NY>=2 & NZ=6) [
       TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,2);
       TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);
       ]
     ELSEIF(NZ=7 & (NY=2|NY=3|NY=4)) [
       TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,2);
       TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,5);
       ]
     ELSEIF((NZ=7|NZ=8) & NY>=5) [
       TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,5);
       IF(LEAFIS=TOT_LEAF_$SYNCVMLC) [
         TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);]
       ELSE [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS+1,1);]
      ]
     ELSEIF(NZ=8 & NY<=3) [IF(LEAFIS=1) [
       TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
       ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,7);]
       TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,4);
      ]
     ELSEIF(NZ=8 & NY=4) [
       TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,4);
       TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,5);
      ]
     ELSEIF(NZ=9) [IF(LEAFIS=1) [
       TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
       ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,7);]
       IF(LEAFIS=TOT_LEAF_$SYNCVMLC) [
         TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);]
       ELSE [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS+1,1);]
     ]
    ]
   ELSEIF(LEAFTYPE_$SYNCVMLC(LEAFIS)=1) ["Full leaf"
      IF(NZ=1) [
        IF(LEAFIS=1) [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
        ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,6);]
        IF(LEAFIS=TOT_LEAF_$SYNCVMLC) [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);]
        ELSE [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS+1,1);]
       ]
      ELSEIF(NZ=2 & NY<=2) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,3);
       ]
      ELSEIF(NZ=2 & NY>=3) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,3);
        IF(LEAFIS=TOT_LEAF_$SYNCVMLC) [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);]
        ELSE [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS+1,1);]
       ]
      ELSEIF(NZ=3 & NY<=5) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,6);
       ]
      ELSEIF((NZ=3|NZ=4) & NY=6) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,6);
        IF(LEAFIS=TOT_LEAF_$SYNCVMLC) [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);]
        ELSE [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS+1,1);]
       ]
      ELSEIF((NZ=4|NZ=5|NZ=6|NZ=7) & NY=1) [
        IF(LEAFIS=1) [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
        ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,7);]
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,2);
       ]
      ELSEIF(NZ=4 & (NY=2|NY=3|NY=4|NY=5)) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,2);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,6);
       ]
      ELSEIF((NZ=5|NZ=6|NZ=7) & NY>=2) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,2);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);
       ]
      ELSEIF(NZ=8 & NY<=4) [
        IF(LEAFIS=1) [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
        ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,7);]
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,5);
       ]
      ELSEIF(NZ=8 & NY>=5) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,5);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);
       ]
      ELSEIF(NZ=9 & NY<=3) [
        IF(LEAFIS=1) [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
        ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,7);]
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,4);
       ]
      ELSEIF(NZ=9 & NY>=4) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,4);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);
       ]
     ]
    ELSE ["Isocenter leaf"
      IF(NZ=1) [
        IF(LEAFIS=1) [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
        ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,7);];
        IF(LEAFIS=TOT_LEAF_$SYNCVMLC) [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);]
        ELSE [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS+1,1);];
       ]
      ELSEIF((NZ=2|NZ=3) & (NY=1|NY=2)) [
        IF(LEAFIS=1) [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
        ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,7);];
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,3);
       ]
      ELSEIF(NZ=2 & NY=3) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,3);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,4);
       ]
      ELSEIF(NZ=2 & NY>=4) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,4);
        IF(LEAFIS=TOT_LEAF_$SYNCVMLC) [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);]
        ELSE [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS+1,1);];
       ]
      ELSEIF(NZ=3 & (NY=3|NY=4|NY=5)) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,3);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,6);
       ]
      ELSEIF((NZ=3|NZ=4) & NY=6) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,6);
        IF(LEAFIS=TOT_LEAF_$SYNCVMLC) [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);]
        ELSE [TEMP2=SURPARA1_$SYNCVMLC(LEAFIS+1,1);];
       ]
      ELSEIF(NZ=4 & NY<=5) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,6);
       ]
      ELSEIF(NZ=5|NZ=6|NZ=7) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);
       ]
      ELSEIF(NZ=8 & NY<=4) [
        IF(LEAFIS=1) [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
        ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,5);];
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,5);
       ]
      ELSEIF(NZ=8 & NY>=5) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,5);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);
       ]
      ELSEIF(NZ=9 & NY=1) [
        IF(LEAFIS=1) [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,1);]
        ELSE [TEMP1=SURPARA1_$SYNCVMLC(LEAFIS-1,5);]
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,2);
       ]
      ELSEIF(NZ=9 & NY>=2) [
        TEMP1=SURPARA1_$SYNCVMLC(LEAFIS,2);
        TEMP2=SURPARA1_$SYNCVMLC(LEAFIS,7);
       ]
     ];
    TEMP1=ABS((TEMP1*(Z(NP)-ZFOCUS_$SYNCVMLC(1))-XYL1)/
          SQRT(1+TEMP1**2));
    TEMP2=ABS((TEMP2*(Z(NP)-ZFOCUS_$SYNCVMLC(1))-XYL1)/
          SQRT(1+TEMP2**2));

    DIST = MIN(DIST,TEMP1,TEMP2);
 "NOW CHECK DISTANCE IN X DIRECTION"
    IF(ENDTYPE_$SYNCVMLC=1) [ "focused leaf end"
      TEMP1=SURPARA2_B_$SYNCVMLC(LEAFIS);
      TEMP1=1/SQRT(1+TEMP1**2);
      TEMP2=SURPARA2_A_$SYNCVMLC(LEAFIS);
      TEMP2=1/SQRT(1+TEMP2**2);
      HOLE=HOLEPOS_$SYNCVMLC(LEAFIS);
      TEMP3=LEAFB_$SYNCVMLC(LEAFIS)-HOLE;
      TEMP4=LEAFA_$SYNCVMLC(LEAFIS)+HOLE;
      TEMP5=SURPARA2_B_$SYNCVMLC(LEAFIS)*(Z(NP)-ZFOCUS_$SYNCVMLC(2));
      TEMP6=SURPARA2_A_$SYNCVMLC(LEAFIS)*(Z(NP)-ZFOCUS_$SYNCVMLC(2));
      IF(NX=1) [
        XL=ABS((TEMP5-XYL2)*TEMP1);
        XR=ABS((TEMP6-XYL2)*TEMP2);
       ]
      ELSEIF(NX=2) [
        XL=ABS(RMAX_CM(ICM_$SYNCVMLC)-XYL2);
        XR=ABS(TEMP3-XYL2);
       ]
      ELSEIF(NX=3) [
        XL=ABS(XYL2-TEMP3);
        XR=ABS((TEMP5-XYL2)*TEMP1);
       ]
      ELSEIF(NX=4) [
        XL=ABS((XYL2-TEMP6)*TEMP2);
        XR=ABS(XYL2-TEMP4);
       ]
      ELSEIF(NX=5) [
        XL=ABS(XYL2-TEMP4);
        XR=ABS(RMAX_CM(ICM_$SYNCVMLC)-XYL2);
       ]
      DIST=MIN(DIST,XL,XR);
     ]
    ELSE ["rounded leaf end"
      TEMP1=ABS(SQRT((Z(NP)-(ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC/2))**2+
                     (XYL2-(LEAFB_$SYNCVMLC(LEAFIS)-LEAFRADIUS_$SYNCVMLC))**2)-
                      LEAFRADIUS_$SYNCVMLC);
      TEMP2=ABS(SQRT((Z(NP)-(ZMIN_$SYNCVMLC+ZTHICK_$SYNCVMLC/2))**2+
                     (XYL2-(LEAFA_$SYNCVMLC(LEAFIS)+LEAFRADIUS_$SYNCVMLC))**2)-
                     LEAFRADIUS_$SYNCVMLC);
      HOLE=HOLEPOS_$SYNCVMLC(LEAFIS);
      TEMP3=LEAFB_$SYNCVMLC(LEAFIS)-HOLE;
      TEMP4=LEAFA_$SYNCVMLC(LEAFIS)+HOLE;
      IF(NX=1) [
        XL=TEMP1;
        XR=TEMP2;
        ]
      IF(NX=3) [
        XL=ABS(XYL2-TEMP3);
        XR=TEMP1;
       ]
      IF(NX=2) [
        XL=ABS(-RMAX_CM(ICM_$SYNCVMLC)-XYL2);
        XR=ABS(XYL2-TEMP3);
       ]
      IF(NX=4) [
        XL=TEMP2;
        XR=ABS(TEMP4-XYL2);
       ]
      IF(NX=5) [
        XL=ABS(XYL2-TEMP4);
        XR=ABS(RMAX_CM(ICM_$SYNCVMLC)-XYL2);
       ]
      DIST=MIN(DIST,XL,XR);
    ]
IF(DIST<0) [OUTPUT LEAFIS,NX,NY,NZ; ('negative dist: ',4I3);]
 ]
ELSE[ "beyond outer edges of leaf bank"
  IF(XYL1 <= SURPARA1_$SYNCVMLC(1,1)*(Z(NP)-ZFOCUS_$SYNCVMLC(1)))[
      TEMP1=SURPARA1_$SYNCVMLC(1,1);
      TEMP1=ABS((TEMP1*(Z(NP)-ZFOCUS_$SYNCVMLC(1))-XYL1)/
                 SQRT(1+TEMP1**2));
    ]
  ELSEIF(XYL1 >= SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,7)*
                   (Z(NP)-ZFOCUS_$SYNCVMLC(1)))[
      TEMP1=SURPARA1_$SYNCVMLC(TOT_LEAF_$SYNCVMLC,7);
      TEMP1=ABS((TEMP1*(Z(NP)-ZFOCUS_$SYNCVMLC(1))-XYL1)/
                 SQRT(1+TEMP1**2));
    ]
  DIST=MIN(Z(NP)-ZMIN_$SYNCVMLC,ZMAX_$SYNCVMLC-Z(NP),TEMP1);
 ]
 ]
 ];
 DIST_sngl=SNGL(DIST);
RETURN;
END; "End of subroutine HOWNEAR_$SYNCVMLC"
"************************************************************************"
"End of SYNCVMLC_cm.mortran"


