TITLE= quality_test

##########################
:start I/O control:

IWATCH= off
STORE INITIAL RANDOM NUMBERS= no
IRESTART= first
STORE DATA ARRAYS= yes
SPR OUTPUT= slabs/cylinders
SPR IN CYLINDER IX= 1
SPR IN SLAB IZ= 1

:stop I/O control:
#########################

##########################
:start Monte Carlo inputs:

NUMBER OF HISTORIES= 1e6
INITIAL RANDOM NO. SEEDS= 1, 4
MAX CPU HOURS ALLOWED= 90.000
IFULL= dose and stoppers
STATISTICAL ACCURACY SOUGHT= 0.1
PHOTON REGENERATION= no

:stop Monte Carlo inputs:
#########################

##########################
:start geometrical inputs:

METHOD OF INPUT= groups
Z OF FRONT FACE= 0.
NSLAB= 6
SLAB THICKNESS= 5
RADII= 1, 15
MEDIA= H2O521ICRU,
 AIR521ICRU;

DESCRIPTION BY= planes
MEDNUM= 1
START ZSLAB= 1
STOP ZSLAB= 6
START RING= 1
STOP RING= 2

:stop geometrical inputs:
#########################

##########################
:start source inputs:

INCIDENT PARTICLE= photon
SOURCE NUMBER= 1
SOURCE OPTIONS= 5, 0, 0, 1
INCIDENT ENERGY= spectrum
SPEC FILENAME= $HEN_HOUSE/spectra/egsnrc/mohan6.spectrum
SPEC IOUTSP= include

:stop source inputs:
#########################

##########################
:start MC transport parameter:

Global ECUT= 0.521
Global PCUT= 0.01
Global SMAX= 1e10
ESTEPE= 0.25
XImax= 0.5
Skin depth for BCA= 3
Boundary crossing algorithm= EXACT
Electron-step algorithm= PRESTA-II
Spin effects= on
Brems angular sampling= KM
Brems cross sections= BH
Photon cross sections= si
Electron Impact Ionization= Off
Photon cross-sections output= off
Bound Compton scattering= On
Pair angular sampling= Simple
Photoelectron angular sampling= On
Rayleigh scattering= Off
Atomic relaxations= On
Set PCUT= 0
Set PCUT start region= 1
Set PCUT stop region= 1
Set ECUT= 0
Set ECUT start region= 1
Set ECUT stop region= 1
Set SMAX= 0
Set SMAX start region= 1
Set SMAX stop region= 1

:stop MC transport parameter:
#########################

##########################
:start media definition:



:stop media definition:
#########################

##########################
:start variance reduction:

ELECTRON RANGE REJECTION= off
ESAVEIN= 0.0
RUSSIAN ROULETTE DEPTH= 0.0000
RUSSIAN ROULETTE FRACTION= 0.0000
EXPONENTIAL TRANSFORM C= 0.0000
PHOTON FORCING= on
START FORCING= 1
STOP FORCING AFTER= 1

:stop variance reduction:
#########################

