
###############################################################################
#
#  EGSnrc egs++ tutor2pp application sample input file
#  Copyright (C) 2015 National Research Council Canada
#
#  This file is part of EGSnrc.
#
#  EGSnrc is free software: you can redistribute it and/or modify it under
#  the terms of the GNU Affero General Public License as published by the
#  Free Software Foundation, either version 3 of the License, or (at your
#  option) any later version.
#
#  EGSnrc is distributed in the hope that it will be useful, but WITHOUT ANY
#  WARRANTY; without even the implied warranty of MERCHANTABILITY or FITNESS
#  FOR A PARTICULAR PURPOSE.  See the GNU Affero General Public License for
#  more details.
#
#  You should have received a copy of the GNU Affero General Public License
#  along with EGSnrc. If not, see <http://www.gnu.org/licenses/>.
#
###############################################################################
#
#  Author:          Iwan Kawrakow, 2005
#
#  Contributors:    Ernesto Mainegra-Hing
#                   Blake Walters
#
###############################################################################
#
#  An example input file for tutor2pp to make tutor2pp run the same simulation
#  as the original mortran tutor2 code, i.e., a 20 MeV source of electrons
#  incident on a 1 mm plate of tantalum.
#
###############################################################################


######################################## Define the geometry:
#                                        a 1mm plate of tantalum
#
:start geometry definition:
    :start geometry:
        library = egs_planes
        type = EGS_Zplanes
        positions = 0 0.1
        name = slab
        :start media input:
            media = TA
        :stop media input:
    :stop geometry:
    simulation geometry = slab
:stop geometry definition:

######################################## Define the source:
#                                        a 20 MeV pencil beam of electrons
#
:start source definition:
    :start source:
        library = egs_parallel_beam
        name = the_source
        :start shape:
            library = egs_point_shape
            position = 0 0 1e-7
        :stop shape:
        direction = 0 0 1
        charge = -1
        :start spectrum:
            type = monoenergetic
            energy = 20.0
        :stop spectrum:
    :stop source:

    simulation source = the_source

:stop source definition:

:start rng definition:

  type = ranmar
  initial seeds = 97 42

:stop rng definition:

######################################### Transport parameters
#                                         you can add any other option
#                                         supported by EGSnrc
#
:start MC transport parameter:

    Global ECUT = 1.5
    Global PCUT = 0.1

:stop MC transport parameter:
